PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Experiment info = {'participant': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Use version = 2025
  Window size (pixels) = [1536, 864]
  clockFormat = iso
  color = 0.0000, 0.0000, 0.0000
  consoleLoggingLevel = exp
  expName = TSRlearn_localizer-task_concepts
  keyboardBackend = PsychToolbox
  runMode = 1
  sortColumns = alphabetical
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Routines
  Routine image_pres
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    CodeComponent set_trigger_image
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock_img = core.Clock()
        trigOn = False
      Begin Routine:
        trigNumber = concept_num
        trigPending = False
      Each Frame:
        if image.status == NOT_STARTED and (not trigOn) and (not trigPending) and tThisFlip >= 0.0 - frameTolerance:
            win.callOnFlip(setParallelData, trigNumber)
            win.callOnFlip(trigClock_img.reset)
            trigPending = True

        # for some reason setting trigOn to True on flip does not work so we have to do it like this
        if trigPending and trigClock_img.getTime() < 0.001:
            trigOn = True
            trigPending = False

        # schedule OFF after 10 ms (from the flip-reset clock)
        if trigOn and trigClock_img.getTime() >= 0.01:
            setParallelData(0)
            trigOn = False
    CodeComponent compute_block_trial_num
      Code Type = Auto->JS
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      Begin Routine:
        current_trial_number = trials.thisN + 1 # make it start at 1
        # block number should increase one trial AFTER a break_interval trial
        if current_trial_number == 1:
            block_num = 1
        elif (current_trial_number - 1) % break_interval == 0:
            block_num = int((current_trial_number - 1) / break_interval) + 1
        else:
            # otherwise keep previous value
            block_num = block_num

        trial_num = current_trial_number

        log("Block number: ", block_num)
        log("Trial number: ", trial_num)
    CodeComponent bids_image
      Code Type = Auto->JS
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      Each Frame:
        concept_label_img = image_shown.split("\\")[0]
        concept_examplar_img =  image_shown.split("\\")[1]
        bids.schedule_onset(image,
                                block_num=block_num,
                                trial_num=trial_num,
                                type_of_stimulus="image",
                                component_label="image",
                                concept_label = concept_label_img,
                                wrd_img_match = int(1-is_mismatch),
                                concept_examplar = concept_examplar_img)
      End Routine:

        bids.mark_offset(image)
    ImageComponent image
      image [set every repeat] = $ "stimuli\\" + image_shown
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur
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  Routine instructions
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    CodeComponent set_trigger_start
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock = core.Clock()
        trigOn = False
      Begin Routine:
        trigNumber = trigger_numbers_dict["start/end"]
      Each Frame:
        if frameN == 0 and not trigOn:
            setParallelData(trigNumber)
            trigClock.reset()
            trigOn = True

        if trigOn and trigClock.getTime() >= 0.01:  # 10 ms pulse
            setParallelData(0)
            trigOn = False
    CodeComponent bids_instruc_01
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting

        bids.schedule_onset(instruction_part1,
                                type_of_stimulus="instructions",
                                component_label="instruction_part1")
      End Routine:
        # log offset at last frame of routine

        bids.mark_offset(instruction_part1)
    TextComponent instruction_part1
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part1_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part1.text = (
           "Welcome to the first part of the experiment.\n"
            "In this part, you will see different images and hear words. Your task is to decide "
            "if the words describe what you see in the images.\n\n"
            "[Press the return key to continue.]"
        )

        if language == "german":
            instruction_part1.text = (
            "Willkommen zum ersten Teil des Experiments.\n"
            "In diesem Teil sehen Sie verschiedene Bilder und hören Wörter. "
            "Ihre Aufgabe ist es zu entscheiden, ob die Wörter die Dinge beschreiben, die "
            "Sie auf den Bildern sehen.\n\n"
            "[Drücken Sie die Eingabetaste, um fortzufahren.]"
        )

        if language == "french":
            instruction_part1.text = (
        "Bienvenue dans la première partie de l'expérience.\n"
        "Dans cette partie, vous verrez différentes images et entendrez des mots. "
        "Votre tâche consiste à déterminer "
        "si les mots décrivent ce que vous voyez dans les images.\n\n"
        " [Appuyez sur la touche Entrée pour continuer.] "
        )
    KeyboardComponent continue_button
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_meg
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    CodeComponent bids_instruc_meg
      Code Type = Auto->JS
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      Each Frame:
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(instruction_meg,
                                #trial_type="localizer",
                                #stim_label="instruction_meg")

        bids.schedule_onset(instruction_meg,
                                type_of_stimulus="instructions",
                                component_label="instruction_meg")
      End Routine:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(instruction_meg)
        bids.mark_offset(instruction_meg)
    TextComponent instruction_meg
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instruction_meg_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_meg.text = (
            "The MEG signal is very sensitive to body and eye movements. "
            "Please try to keep still during the task and save any movements for the breaks. "
            "Also, try to blink as little as possible while the task is running. "
            "Thank you!\n"
            "[Press the return key to start the practice trials.]"
        )

        if language == "german":
            instruction_meg.text = (
        "Das MEG-Signal ist sehr empfindlich gegenüber Körper- und Augenbewegungen. "
        "Bitte versuchen Sie, während der Aufgabe so still wie möglich zu bleiben und Bewegungen auf die Pausen zu beschränken. "
        "Versuchen Sie außerdem, während der Aufgabe so wenig wie möglich zu blinzeln. "
        "Vielen Dank!\n"
        "[Drücken Sie die Eingabetaste, um mit den Übungsdurchgängen zu beginnen.]"
        )
    KeyboardComponent continue_button_5
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_02
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    CodeComponent bids_instruc_02
      Code Type = Auto->JS
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      Each Frame:
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(instruction_part2,
                                #trial_type="localizer",
                                #stim_label="instruction_02")

        bids.schedule_onset(instruction_part2,
                                type_of_stimulus="instructions",
                                component_label="instruction_part2")
      End Routine:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(instruction_part2)

        bids.mark_offset(instruction_part2)
    TextComponent instruction_part2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part2_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part2.text = (
            "After each image, you will hear a word. When the word appears, you are "
            "asked to think about if the word matches the object you saw in the previous image "
            "or not.\n\n"
            "[Press the return key to continue.] "
        )

        if language == "german":
            instruction_part2.text = (
           "Zuerst sehen Sie ein Bild, gefolgt von einem gesprochenem Wort. "
            "Entscheiden Sie, ob das Wort zu dem Bild passt, das Sie gerade gesehen haben oder nicht.\n\n"
           "[Drücken Sie die Eingabetaste, um fortzufahren.] "
        )

        if language == "french":
            instruction_part2.text = (
        "Après chaque image, vous entendrez un mot. Lorsque "
        "le mot apparaît, vous êtes invité à réfléchir si le "
        "mot correspond à l'objet que vous avez vu dans l'image "
        "précédente ou non.\n\n "
        "[Appuyez sur la touche Entrée pour continuer.] ")
    KeyboardComponent continue_button_3
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine ITI
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    CodeComponent set_trigger_fix_cross
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock = core.Clock()
      Begin Routine:
        fixcross_trigger = trigger_numbers_dict["fixation cross ITI"]
        trigPending = False
      Each Frame:
        if fix_cross_2.status == NOT_STARTED and (not trigOn) and (not trigPending) and tThisFlip >= 0.0 - frameTolerance:
            win.callOnFlip(setParallelData, fixcross_trigger)
            win.callOnFlip(trigClock.reset)
            trigPending = True

        # for some reason setting trigOn to True on flip does not work so we have to do it like this
        if trigPending and trigClock.getTime() < 0.001:
            trigOn = True
            trigPending = False

        # schedule OFF after 10 ms (from the flip-reset clock)
        if trigOn and trigClock.getTime() >= 0.01:
            setParallelData(0)
            trigOn = False
    CodeComponent bids_ITI_logging
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(fix_cross_2,
                                block_num = block_num,
                                trial_num = trial_num,
                                type_of_stimulus="fixation cross",
                                component_label="fix_cross_after_trial")
      End Routine:
        # log offset at last frame of routine
        bids.mark_offset(fix_cross_2)
    TextComponent fix_cross_2
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = length_of_ITI
      text = +
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    CodeComponent set_dur_ITI
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys == None:
            length_of_ITI = ITI_length
        elif key_resp.keys in ["left", "right"]:
            length_of_ITI = 2
  Routine settings
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    CodeComponent functions_imports
      Code Type = Auto->JS
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      Begin Experiment:
        # log function that saves variables to log file
        def log(*msgs, sep=' ', end='\n'):
            log_file = u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'] + '_print.log')
            print(*msgs, sep=sep, end=end, flush=True)

            # Append to log file
            with open(log_file, 'a') as f:
                f.write(sep.join(str(msg) for msg in msgs) + end)


        from triggers import setParallelData
        setParallelData(0)
    CodeComponent exp_settings
      Code Type = Auto->JS
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      Before Experiment:
        ## all important task parameters to set ##

        # response prompt positions
        possible_prompt_positions = [-0.1, 0.1] # x coordinates

        # duration of image presentation  [s]
        image_dur = 0.75

        # time to make response [s]
        response_time = 1.5

        # is there feedback or not
        fdback = 1 # [0 = no, 1 = yes]

        # feedback duration [s]
        fdback_dur = 0.2

        # duration of rest breaks [s]
        break_dur = 15

        # interval of the breaks (every x trials)
        break_interval = 50
        total_block_number = 4 # how many blocks in total

        # response - key mapping
        left_key = 'left'
        right_key = 'right'
        possible_keys = [left_key, right_key]

        # language for instruction
        language = 'french' # 'english', 'french' or 'german'

        # match /non-match responses or just non-match
        match_responses = 0 # [no "match" responses = 0, match and nonmatch responses = 1]
    CodeComponent bids_logging_functions
      Code Type = Auto->JS
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      Begin Experiment:
        # --- BIDS event logger (no Builder BIDS components needed) ---
        from pathlib import Path
        import csv
        import numpy as np
        import atexit

        class BIDSLogger:
            def __init__(self, win, clock, default_cols=None):
                self.win = win
                self.clock = clock
                self.rows = []          # list of dicts -> will become events.tsv
                self.active = {}        # stim -> row index (for duration)
                self.defaults = default_cols or {}

                # fixed column order (add any you want to see in the TSV)
                self.col_order = [
                    "subject", "block_num", "trial_num",
                    "component_label", "onset", "duration",
                    "type_of_stimulus", "concept_label",
                    "concept_examplar",
                    "response_time", "response",
                    "expected_response", "wrd_img_match",
                    "correct"
                ]

            # schedule logging of onset on the *next* flip (exactly when the stim appears)
            def schedule_onset(self, stim, **extra_cols):
                 # Onset: first frame it is STARTED
                if getattr(stim, "status", None) == STARTED and stim not in self.active:
                    # Builder already records exact onset on flip into tStartRefresh;
                    # fall back to current clock if that isn't available.
                    t_on = getattr(stim, "tStartRefresh", None)
                    if t_on is None:
                        t_on = self.clock.getTime()
                    row = {
                        "onset": float(t_on),
                        "duration": np.nan,
                    }
                    row.update(self.defaults)
                    row.update(extra_cols)
                    self.rows.append(row)
                    self.active[stim] = len(self.rows) - 1

            # to log the offset and therefore compute durations of components
            def mark_offset(self, stim):
                if getattr(stim, "status", None) == FINISHED and stim in self.active:
                    idx = self.active.pop(stim)
                    t_off = getattr(stim, "tStopRefresh", None)
                    if t_off is None:
                        t_off = self.clock.getTime()
                    self.rows[idx]["duration"] = float(t_off - self.rows[idx]["onset"])

            # log a one-shot event right now (no duration), e.g., button press
            def add_instant(self, trial_type, **extra_cols):
                row = {"onset": float(self.clock.getTime()), "duration": 0.0,
                       "type_of_stimulus": trial_type}
                row.update(self.defaults)
                row.update(extra_cols)
                self.rows.append(row)

            # write out a BIDS-like events.tsv
            def save(self, filename_base):
                out = Path(filename_base).with_suffix("")  # strip .csv/.log if present
                out = out.parent / (out.name + "_events.tsv")

                # union of all keys, but keep preferred order first
                all_keys = list(self.col_order)
                for r in self.rows:
                    for k in r.keys():
                        if k not in all_keys:
                            all_keys.append(k)

                with open(out, "w", newline="", encoding="utf-8") as f:
                    w = csv.DictWriter(f, fieldnames=all_keys, delimiter="\t", extrasaction="ignore")
                    w.writeheader()
                    for r in self.rows:
                        # convert Nones to "n/a" for BIDS friendliness
                        out_row = {k: ("n/a" if (r.get(k) is None or (isinstance(r.get(k), float) and np.isnan(r.get(k)))) else r.get(k))
                                   for k in all_keys}
                        w.writerow(out_row)

                return str(out)
        # set global clock as default because we need it for timing
        bids = None

        # atexit autosave: runs on normal finish AND on ESC (core.quit)
        def _bids_autosave():
            try:
                if bids and hasattr(bids, "rows"):
                    out = bids.save(thisExp.dataFileName)
                    print(f"[autosave] BIDS events written to: {out}")
            except Exception as e:
                print(f"[autosave] Failed to save BIDS events: {e}")
      Begin Routine:
        # ---- Create the logger once ----
        bids = BIDSLogger(
            win=win,
            clock=globalClock,
            default_cols=dict(
                subject=expInfo.get("participant")
            )
        )

        # write a header-only file immediately so each start creates a file
        _ = bids.save(thisExp.dataFileName)

        # atexit autosave: runs on normal finish AND on ESC (core.quit)
        atexit.register(_bids_autosave)
    CodeComponent set_trigger_numbers
      Code Type = Auto->JS
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      Begin Experiment:
        # define which trigger numbers to send
        trigger_numbers_dict = {
        "start/end": 255,
        "word presentation": 99,
        "response (button press)": 127,
        "feedback": 96,
        "fixation cross ITI": 94,
        "break_start": 81,
        "break_end": 82
        }
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        import importlib.metadata as im

        if im.entry_points.__code__.co_argcount == 0:  # entry_points() takes no args
            _orig_entry_points = im.entry_points

            def _entry_points(*args, **kwargs):
                # PsychoPy calls: entry_points(group="psychopy.sound.backends")
                group = kwargs.get("group", None)
                eps = _orig_entry_points()

                # Old API may return dict-like: {'groupname': [EntryPoint,...], ...}
                if isinstance(eps, dict):
                    return eps.get(group, []) if group else eps

                # If it returns a list, we can filter by .group if present
                if group:
                    return [ep for ep in eps if getattr(ep, "group", None) == group]
                return eps

            im.entry_points = _entry_points
    CodeComponent set_cond_file
      Code Type = Auto->JS
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      Begin Experiment:
        # zero-pad participant number for 0–9
        p_num = int(expInfo['participant'])
        conditions_file = f"sequences/localizer_conditions_{p_num:02d}.xlsx"
  Routine instructions_03
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    CodeComponent bids_instruc_03
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(instruction_part3,
                                #trial_type="localizer",
                                #stim_label="instruction_03")


        bids.schedule_onset(instruction_part3,
                                type_of_stimulus="instructions",
                                component_label="instruction_part3")
      End Routine:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(instruction_part3)
        bids.mark_offset(instruction_part3)
    TextComponent instruction_part3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part3_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part3.text = (
        "If the image and the word don't match, you need to respond straight away. "
        "Press the right arrow key if the word does not match the previous image. If they match, you don't have to do anything. "
        "The fixation cross will quickly change color to show you if you did it correctly.\n\n"
        "[Press the return key to continue.] "
        )

        if language == "german":
            instruction_part3.text = (
        "Wenn das Bild und das Wort nicht übereinstimmen, müssen sie direkt reagieren. "
        "Drücken Sie die rechte Pfeiltaste, wenn das Wort nicht zum vorherigen Bild passt. Stimmen "
        "sie  überein, müssen sie gar nichts tun. "
        "Das Fixationskreuz verändert kurz seine Farbe, um anzuzeigen, ob sie richtig geantwortet haben.\n\n"
        "[Drücken Sie die Eingabetaste, um fortzufahren.]"
        )

        if language == "french":
            instruction_part3.text = (
        "Si l'image et le mot ne correspondent pas, vous devez réagir immédiatement. "
        "Appuyez sur la flèche droite si le mot ne correspond pas à l'image précédente. S'ils correspondent, vous n'avez rien à faire. "
        "La croix de fixation changera rapidement de couleur pour vous indiquer si vous avez bien réagi.\n\n"
        "[Appuyez sur Entrée pour continuer.] "
        )
    KeyboardComponent continue_button_4
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_end
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    CodeComponent set_trigger_end
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock = core.Clock()
      Begin Routine:
        trigNumber = trigger_numbers_dict["start/end"]
        trigPending = False
      Each Frame:
        if instruction_end.status == NOT_STARTED and (not trigOn) and (not trigPending) and tThisFlip >= 0.0 - frameTolerance:
            win.callOnFlip(setParallelData, trigNumber)
            win.callOnFlip(trigClock.reset)
            trigPending = True

        # for some reason setting trigOn to True on flip does not work so we have to do it like this
        if trigPending and trigClock.getTime() < 0.001:
            trigOn = True
            trigPending = False

        # schedule OFF after 10 ms (from the flip-reset clock)
        if trigOn and trigClock.getTime() >= 0.01:
            setParallelData(0)
            trigOn = False
    CodeComponent bids_instruc_end
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(instruction_end,
                                #trial_type="localizer",
                                #stim_label="instruction_end")

        bids.schedule_onset(instruction_end,
                                type_of_stimulus="instructions",
                                component_label="instruction_end")
      End Routine:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(instruction_end)
        bids.mark_offset(instruction_end)
    TextComponent instruction_end
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_end_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_end.text = (
            "You have finished the first part of the task.\n\nPress the return key to exit. "
        )

        if language == "german":
            instruction_end.text = (
            "Sie haben den ersten Teil der Aufgabe beendet.\n\nDrücken Sie die Eingabetaste, um zu beenden. "
        )

        if language == "french":
            instruction_end.text = (
            "Vous avez terminé la première partie de la tâche.\n\nAppuyez sur la touche Entrée pour quitter. "
        )
    KeyboardComponent continue_button_7
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_startexp
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    CodeComponent bids_instruc_startexp
      Code Type = Auto->JS
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      Begin Routine:
        ## schedule bids trigger setting
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(instruction_startexp,
                                #trial_type="localizer",
                                #stim_label="instruction_startexp")
      Each Frame:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(instruction_startexp)

        bids.schedule_onset(instruction_startexp,
                            type_of_stimulus="instructions",
                            component_label="instruction_start")
      End Routine:
        bids.mark_offset(instruction_startexp)
    TextComponent instruction_startexp
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_startexp_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_startexp.text = (
            "You have completed all practice trials. Now the main task will begin. "
            "Always press the right arrow key when the word does not match the previous image. "
            "There will be regular breaks where you can rest for a moment.\n\n"
            "[Press the return key to start the main task.]"
        )

        if language == "german":
            instruction_startexp.text = (
        "Sie haben alle Übungsdurchgänge abgeschlossen. Jetzt beginnt die Hauptaufgabe. "
        "Drücken Sie immer die rechte Pfeiltaste, wenn das Wort nicht zum vorherigen Bild passt. "
        "Es wird regelmäßige Pausen geben, in denen Sie sich kurz ausruhen können.\n\n"
        "[Drücken Sie die Eingabtaste, um die Hauptaufgabe zu starten.]"
        )

        if language == "french":
            instruction_startexp.text = (
        "Vous avez terminé tous les essais pratiques. La tâche principale va maintenant commencer. "
        "Appuyez toujours sur la flèche droite lorsque le mot ne correspond pas à l'image précédente. "
        "Il y aura des pauses régulières pendant lesquelles vous pourrez vous reposer un instant.\n\n"
        "[Appuyez sur la touche Entrée pour commencer la tâche principale.] "
        )
    KeyboardComponent continue_button_6
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine image_pres_prc
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    ImageComponent image_prc
      durationEstim = 1
      image [set every repeat] = $ "stimuli\\practice_images\\" + image_shown
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur
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  Routine ITI_prc
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    TextComponent fix_cross_2_prc
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = $ITI_length
      text = +
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  Routine break_3
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    CodeComponent definition_breaks
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN == 0:
           continueRoutine = False
        elif current_trial_number % break_interval!= 0:
            continueRoutine = False
        elif block_num == total_block_number:
             continueRoutine = False
    CodeComponent control_pport_trigger_break
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock = core.Clock()
      Begin Routine:
        trigPending = False
        run_break = False
        end_trig_send = False

        if continueRoutine == True:
            run_break = True
      Each Frame:
        stim = "break_start"
        breakstart_trigger = trigger_numbers_dict[stim]

        if breaks_instruction.status == NOT_STARTED and (not trigOn) and (not trigPending) and tThisFlip >= 0.0 - frameTolerance:
            win.callOnFlip(setParallelData, breakstart_trigger)
            win.callOnFlip(trigClock.reset)
            trigPending = True

        # for some reason setting trigOn to True on flip does not work so we have to do it like this
        if trigPending and trigClock.getTime() < 0.001:
            trigOn = True
            trigPending = False

        # schedule OFF after 10 ms (from the flip-reset clock)
        if trigOn and trigClock.getTime() >= 0.01:
            setParallelData(0)
            trigOn = False
      End Routine:
        # send trigger for end break
        stim = "break_end"
        breakend_trigger = trigger_numbers_dict[stim]

        if run_break and not end_trig_send:
            setParallelData(breakend_trigger)
            trigClock.reset()
            trigOn = True
            core.wait(0.01) # wait so no overlap with next img trigger

        if trigOn and trigClock.getTime() >= 0.01:  # 10 ms pulse
            setParallelData(0)
            trigOn = False
            core.wait(0.005) # wait so no overlap with next img trigger
    CodeComponent bids_break_logging
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(breaks_instruction,
                            block_num = block_num,
                            trial_num = trial_num,
                            type_of_stimulus="break",
                            component_label="break_instruction")
      End Routine:

        bids.mark_offset(breaks_instruction)
    TextComponent breaks_instruction
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = break_dur
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    CodeComponent set_break_instruction_text
      Code Type = Auto->JS
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      Begin Routine:
        if language=="english":
            breaks_instruction.text = (
            "Break, the task will continue soon.")
        elif language=="german":
             breaks_instruction.text =(
            "Pause, die Aufgabe geht gleich weiter.")
        elif language=="french":
             breaks_instruction.text =(
            "Pause, l'exercice reprend tout de suite.")
    CodeComponent set_progress
      Code Type = Auto->JS
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      Begin Routine:
        timer_break = core.CountdownTimer(break_dur)
      Each Frame:
        frac = 1.0 - (int(timer_break.getTime()) / break_dur)  # 0→1
        progress_bar_breaks.progress = frac
    ProgressComponent progress_bar_breaks
      anchor = center-left
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (-0.35, -0.07)
      progress [set every frame] = frac
      size = (0.75, 0.025)
      startVal [time (s)] = 0
      stopVal [duration (s)] = break_dur
      units = height
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  Routine sound_pres
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    CodeComponent set_trigger_word
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock = core.Clock()
      Begin Routine:
        trigNumber = trigger_numbers_dict["word presentation"]


        spoken_word.stop()  # make sure nothing is still playing from the previous trial
        soundScheduled = False
        trigOnFlipTime = None
      Each Frame:
        if (not soundScheduled) and tThisFlip >= 0.0 - frameTolerance:
            spoken_word.stop()
            spoken_word.setSound(f"sounds/{word_shown}.mp3", secs=1)

            nextFlipPTB = win.getFutureFlipTime(clock='ptb')
            win.callOnFlip(setParallelData, trigNumber)
            spoken_word.play(when=nextFlipPTB)

            trigOnFlipTime = tThisFlipGlobal   # time of the upcoming flip

            soundScheduled = True

        # Off after 10 ms (measured in global flip time)
        if trigOnFlipTime is not None and (tThisFlipGlobal - trigOnFlipTime) >= 0.01:
            win.callOnFlip(setParallelData, 0)
            trigOnFlipTime = None
      End Routine:
        spoken_word.stop()
    CodeComponent set_word
      Code Type = Auto->JS
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      Begin Routine:
        if language == 'english':
            part1 = (word_shown_english)
            part2 = "_en"
            word_shown = part1 + part2


        elif language == 'french':
            part1 = (word_shown_french)
            part2 = "_fr"
            word_shown = part1 + part2
    SoundComponent spoken_word
      durationEstim = 1
      forceEndRoutine = False
      resample = False
      sound [set every repeat] = $f"sounds/{word_shown}.mp3"
      startVal [condition] = 9999
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    CodeComponent bids_word_logging
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(spoken_word,
                                block_num = block_num,
                                trial_num = trial_num,
                                type_of_stimulus="word",
                                component_label="word",
                                wrd_img_match = int(1-is_mismatch),
                                concept_label = word_shown)
      End Routine:
        bids.mark_offset(spoken_word)
    TextComponent fix_cross
      color [set every repeat] = 1.0000, 1.0000, 1.0000
      durationEstim = response_time
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = response_time
      text = +
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    CodeComponent set_matchside
      Code Type = Auto->JS
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      Begin Routine:
        # positions
        prompt_positions_dir = ["left", "right"]

        nonmatch_key_idx = 1 # non-match is always on the right

        nonmatch_key = possible_keys[nonmatch_key_idx]
        match_key_idx = 1 - nonmatch_key_idx
        match_key = possible_keys[match_key_idx]
    CodeComponent allowed_keys
      Code Type = Auto->JS
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      Begin Routine:
        if match_responses == 0:
            allowed_key_list = [nonmatch_key]  # list of allowed keys
        else:
            # default: allow both match and nonmatch responses
            allowed_key_list = [match_key, nonmatch_key]
    KeyboardComponent key_resp
      allowedKeys = allowed_key_list
      durationEstim = 1
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0
      store = first key
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    CodeComponent code_key_resp
      Code Type = Auto->JS
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      Begin Routine:
        # reset key resp and correct answer
        key_resp.keys = None
        key_resp.corr = None
      Each Frame:
        if match_responses == 1:

            if is_mismatch == 0:
                answer_correct = match_key
            elif is_mismatch == 1:
                answer_correct = nonmatch_key
            # Evaluate participant response
            if key_resp.keys is None:
                key_resp.corr = "m"   # no response
            elif key_resp.keys == answer_correct:
                key_resp.corr = 1      # correct response
            else:
                key_resp.corr = 0      # wrong key


        if match_responses == 0:

            if is_mismatch == 0:
                answer_correct = None
            elif is_mismatch == 1:
                answer_correct = nonmatch_key

            # Evaluate participant response
            if key_resp.keys == answer_correct:
                key_resp.corr = 1      # correct response
            else:
                key_resp.corr = 0      # wrong key
    CodeComponent set_trigger_response
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock_resp = core.Clock()
      Begin Routine:
        response_trigger = trigger_numbers_dict["response (button press)"]
        resp_trig_giv = False
        respTrigOn = False
      Each Frame:
        if (key_resp.keys is not None) and (not resp_trig_giv):
            setParallelData(response_trigger)
            trigClock_resp.reset()
            resp_trig_giv = True
            respTrigOn = True
            core.wait(0.01) # wait a bit so that feedback trigger doesnt start immediately

        if respTrigOn and trigClock_resp.getTime() >= 0.01:
            setParallelData(0)
            respTrigOn = False
            core.wait(0.001) # wait a bit so that feedback trigger doesnt start immediately
    CodeComponent bids_resp_logging
      Code Type = Auto->JS
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      End Routine:
        # response neeeds to be saved at end of trial
        bids.add_instant(
            "response",
            response=(key_resp.keys if key_resp.keys else "m"),
            response_time=(key_resp.rt if hasattr(key_resp, "rt") else None),
            correct=(key_resp.corr if hasattr(key_resp, "corr") else "m"),
            expected_response = ("m" if answer_correct == None else answer_correct),
            block_num = block_num,
            trial_num = trial_num,
            wrd_img_match = int(1-is_mismatch),
            component_label = "possible_button_press"
        )
    CodeComponent feedback_control
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock_fdback = core.Clock()
      Begin Routine:
        # prepare feedback in form of word color change or too slow message
        feedback_given = False

        feedback_trigger_sent = False
        feedback_trigger_code = trigger_numbers_dict["feedback"]
      Each Frame:
        if fdback == 1:
            if is_mismatch==1:  # Mismatch trial - button press required
                if (not feedback_given):
                    # Case 1: Button was pressed before deadline
                    if (key_resp.keys is not None):
                        if getattr(key_resp, 'corr', None) == 1:
                            fix_cross.setColor('green')
                            feedback_given = True
                            feedback_end = t + 0.2
                        else:
                            fix_cross.setColor('red')
                            feedback_given = True
                            feedback_end = t + 0.2
                    # Case 2: No response by deadline
                    elif (t >= response_time) and (key_resp.keys is None):
                        fix_cross.setColor('red')  # No response on mismatch = incorrect
                        feedback_given = True
                        feedback_end = t + 0.2

                # Send trigger ONCE when feedback starts
                if feedback_given and not feedback_trigger_sent and not trigOn:
                   setParallelData(feedback_trigger_code)
                   feedback_trigger_sent = True
                   trigClock_fdback.reset()
                   trigOn = True

                if trigOn and trigClock_fdback.getTime() >= 0.01:  # 10 ms pulse
                    setParallelData(0)
                    trigOn = False


                # feedback for 0.2s
                if feedback_given:
                    try:
                        if not fix_cross.autoDraw:
                            fix_cross.setAutoDraw(True)
                    except Exception:
                        pass
                    if t >= feedback_end:
                        spoken_word.stop()
                        continueRoutine = False

            elif is_mismatch==0: # no button should be pressed

                if (not feedback_given):
                    # Case 1: Button was pressed (incorrect on match trial)
                    if (key_resp.keys is not None):
                        fix_cross.setColor('red')
                        feedback_given = True
                        feedback_end = t + 0.2
                    # Case 2: No response by deadline (correct on match trial)
                    elif (t >= response_time) and (key_resp.keys is None):
                        fix_cross.setColor('green')
                        feedback_given = True
                        feedback_end = t + 0.2

                # Send trigger ONCE when feedback starts
                if feedback_given and not feedback_trigger_sent and not trigOn:
                    setParallelData(feedback_trigger_code)
                    feedback_trigger_sent = True
                    trigClock_fdback.reset()
                    trigOn = True

                if trigOn and trigClock_fdback.getTime() >= 0.01:  # 10 ms pulse
                    setParallelData(0)
                    trigOn = False

                if feedback_given:
                    try:
                        if not fix_cross.autoDraw:
                            fix_cross.setAutoDraw(True)
                    except Exception:
                        pass
                    if t >= feedback_end:
                        spoken_word.stop()
                        continueRoutine = False

        else:
            # no feedback: end on response or timeout
            if (key_resp.keys is not None) or (t >= response_time):
                spoken_word.stop()
                continueRoutine = False
  Routine sound_pres_prc
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    CodeComponent set_word_prc
      Code Type = Auto->JS
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      Begin Routine:
        if language == 'english':
            part1 = (word_shown_english)
            part2 = ""
            word_shown = part1 + part2


        elif language == 'german':
            word_shown = (word_shown_german)

        elif language == 'french':
            part1 = (word_shown_french)
            part2 = "_fr"
            word_shown = part1 + part2
    SoundComponent spoken_word_prc
      durationEstim = 1
      forceEndRoutine = False
      resample = False
      sound [set every repeat] = $ "sounds//" + word_shown + ".mp3"
      startVal [time (s)] = 0.0
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    TextComponent fix_cross_prc
      color [set every repeat] = white
      durationEstim = response_time
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = +
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    CodeComponent set_matchside_prc
      Code Type = Auto->JS
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      Begin Routine:
        # positions
        prompt_positions_dir = ["left", "right"]

        nonmatch_key_idx = 1 # non-match is always on the right

        nonmatch_key = possible_keys[nonmatch_key_idx]
        match_key_idx = 1 - nonmatch_key_idx
        match_key = possible_keys[match_key_idx]
    CodeComponent allowed_keys_prc
      Code Type = Auto->JS
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      Begin Routine:
        if match_responses == 0:
            allowed_key_list = [nonmatch_key]  # list of allowed keys
        else:
            # default: allow both match and nonmatch responses
            allowed_key_list = [match_key, nonmatch_key]
    KeyboardComponent key_resp_prc
      allowedKeys = allowed_key_list
      durationEstim = 1.25
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0
      stopVal [duration (s)] = response_time
      store = first key
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    CodeComponent code_key_resp_prc
      Code Type = Auto->JS
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      Begin Routine:
        # reset key resp and correct answer
        key_resp_prc.keys = None
        key_resp_prc.corr = None
      Each Frame:
        if match_responses == 1:

            if match_idx == 1:
                answer_correct = match_key
            elif match_idx == 0:
                answer_correct = nonmatch_key
            # Evaluate participant response
            if key_resp_prc.keys is None:
                key_resp_prc.corr = "m"   # no response
            elif key_resp_prc.keys == answer_correct:
                key_resp_prc.corr = 1      # correct response
            else:
                key_resp_prc.corr = 0      # wrong key


        if match_responses == 0:

            if match_idx == 1:
                answer_correct = None
            elif match_idx == 0:
                answer_correct = nonmatch_key

            # Evaluate participant response
            if key_resp_prc.keys == answer_correct:
                key_resp_prc.corr = 1      # correct response
            else:
                key_resp_prc.corr = 0      # wrong key
    CodeComponent feedback_control_2
      Code Type = Auto->JS
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      Begin Routine:
        # prepare feedback in form of word color change or too slow message
        feedback_given = False
        show_until = None
      Each Frame:
        if fdback == 1:
            if match_idx==0:  # Mismatch trial - button press required
                if (not feedback_given):
                    # Case 1: Button was pressed before deadline
                    if (key_resp_prc.keys is not None):
                        if getattr(key_resp_prc, 'corr', None) == 1:
                            fix_cross_prc.setColor('green')
                        else:
                            fix_cross_prc.setColor('red')
                        feedback_given = True
                        feedback_end = t + 0.2
                    # Case 2: No response by deadline
                    elif (t >= response_time):
                        fix_cross_prc.setColor('red')  # No response on mismatch = incorrect
                        feedback_given = True
                        feedback_end = t + 0.2

                # feedback for 0.2s
                if feedback_given:
                    try:
                        if not fix_cross_prc.autoDraw:
                            fix_cross_prc.setAutoDraw(True)
                    except Exception:
                        pass
                    if t >= feedback_end:
                        continueRoutine = False

            elif match_idx==1: # no button should be pressed

                if (not feedback_given):
                    # Case 1: Button was pressed (incorrect on match trial)
                    if (key_resp_prc.keys is not None):
                        fix_cross_prc.setColor('red')
                        feedback_given = True
                        feedback_end = t + 0.2
                    # Case 2: No response by deadline (correct on match trial)
                    elif (t >= response_time):
                        fix_cross_prc.setColor('green')
                        feedback_given = True
                        feedback_end = t + 0.2

                # Hold feedback for 0.2s then end
                if feedback_given:
                    try:
                        if not fix_cross_prc.autoDraw:
                            fix_cross_prc.setAutoDraw(True)
                    except Exception:
                        pass
                    if t >= feedback_end:
                        continueRoutine = False

        else:
            # no feedback: end on response or timeout
            if (key_resp_prc.keys is not None) or (t >= response_time):
                continueRoutine = False
  Routine instructions_04
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    CodeComponent bids_instruc_04
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(instruction_part3,
                                #trial_type="localizer",
                                #stim_label="instruction_03")


        bids.schedule_onset(instruction_part4,
                                type_of_stimulus="instructions",
                                component_label="instruction_part4")
      End Routine:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(instruction_part3)
        bids.mark_offset(instruction_part4)
    TextComponent instruction_part4
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part4_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part4.text = (
        "Please respond as quickly and accurately as possible. "
        "We’ll start with some practice trials. "
        "Use the right arrow key for mismatches.\n\n"
        "[Press the return key to continue.] "
        )

        if language == "german":
            instruction_part4.text = (
        "Bitte antworten Sie so schnell und genau wie möglich. "
        "Wir beginnen nun mit einigen Übungsdurchgängen. "
        "Nutzen Sie die rechte Pfeiltaste für Nicht-Übereinstimmungen.\n\n"
        "[Drücken Sie die Eingabetaste, um fortzufahren.]"
        )

        if language == "french":
            instruction_part4.text = (
        "Veuillez répondre aussi rapidement et précisément que possible. "
        "Nous allons commencer par quelques essais. "
        "Utilisez la flèche droite pour les non-correspondances.\n\n"
        "[Appuyez sur la touche Entrée pour continuer.] "
        )
    KeyboardComponent continue_button_9
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine check_megtrig
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import sys, pkgutil
        print("PYEXE:", sys.executable)         # PsychoPy's python.exe
        print("First site-packages on path:\n", "\n".join(sys.path[:5]))

        # See if either name is visible
        print("has meg_triggers? ", any(m.name == "meg_triggers" for m in pkgutil.iter_modules()))
        print("has cimh_psychopy_meg? ", any(m.name == "cimh_psychopy_meg" for m in pkgutil.iter_modules()))
Flow
  Routine settings
  Routine instructions
  Routine instructions_02
  Routine instructions_03
  Routine instructions_04
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = sequences/localiser_trials_prc.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image_shown': 'anchor.jpg', 'word_shown_german': 'Anker', 'word_shown_french': 'ancre', 'word_shown_english': 'anchor', 'ITI_length': 0.75, 'correct_response': 'y', 'match_idx': 1, 'nonmatch_pres_side': 'right'},
      {'image_shown': 'ant.jpg', 'word_shown_german': 'Ameise', 'word_shown_french': 'fourmi', 'word_shown_english': 'ant', 'ITI_length': 0.89, 'correct_response': 'r', 'match_idx': 1, 'nonmatch_pres_side': 'left'},
      {'image_shown': 'axe.jpg', 'word_shown_german': 'Pferd', 'word_shown_french': 'cheval', 'word_shown_english': 'horse', 'ITI_length': 0.85, 'correct_response': 'y', 'match_idx': 0, 'nonmatch_pres_side': 'left'},
      {'image_shown': 'bus.jpg', 'word_shown_german': 'Bus', 'word_shown_french': 'bus', 'word_shown_english': 'bus', 'ITI_length': 1.01, 'correct_response': 'y', 'match_idx': 1, 'nonmatch_pres_side': 'right'},
      {'image_shown': 'ball.jpg', 'word_shown_german': 'Gesicht', 'word_shown_french': 'visage', 'word_shown_english': 'face', 'ITI_length': 1.04, 'correct_response': 'r', 'match_idx': 0, 'nonmatch_pres_side': 'right'},
      {'image_shown': 'banana.jpg', 'word_shown_german': 'Banane', 'word_shown_french': 'banane', 'word_shown_english': 'banana', 'ITI_length': 0.99, 'correct_response': 'y', 'match_idx': 1, 'nonmatch_pres_side': 'right'},
      {'image_shown': 'glasses.jpg', 'word_shown_german': 'Brille', 'word_shown_french': 'lunettes', 'word_shown_english': 'glasses', 'ITI_length': 0.79, 'correct_response': 'r', 'match_idx': 1, 'nonmatch_pres_side': 'left'}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
    Routine image_pres_prc
    Routine sound_pres_prc
    Routine ITI_prc
  LoopTerminator trials_practice
  Routine instructions_startexp
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $conditions_file
    loopType = sequential
    nReps = 1
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    conditions:
      [{'block': 1, 'trial_in_block': 1, 'concept': 'bread', 'concept_num': 3, 'image_shown': 'bread\\bread_03.jpg', 'word_shown_english': 'bread', 'word_shown_german': 'Brot', 'word_shown_french': 'Pain', 'is_prompt': 1, 'is_mismatch': 0, 'ITI_length': 1.15, 'correct_response': None, 'nonmatch_pres_side': None},
      {'block': 1, 'trial_in_block': 2, 'concept': 'hammer', 'concept_num': 7, 'image_shown': 'hammer\\hammer_20.jpg', 'word_shown_english': 'hammer', 'word_shown_german': 'Hammer', 'word_shown_french': 'Marteau', 'is_prompt': 1, 'is_mismatch': 0, 'ITI_length': 1.05, 'correct_response': None, 'nonmatch_pres_side': None},
      {'block': 1, 'trial_in_block': 3, 'concept': 'bread', 'concept_num': 3, 'image_shown': 'bread\\bread_09.jpg', 'word_shown_english': 'bread', 'word_shown_german': 'Brot', 'word_shown_french': 'Pain', 'is_prompt': 1, 'is_mismatch': 0, 'ITI_length': 0.98, 'correct_response': None, 'nonmatch_pres_side': None},
      {'block': 1, 'trial_in_block': 4, 'concept': 'hammer', 'concept_num': 7, 'image_shown': 'hammer\\hammer_34.jpg', 'word_shown_english': 'hammer', 'word_shown_german': 'Hammer', 'word_shown_french': 'Marteau', 'is_prompt': 1, 'is_mismatch': 0, 'ITI_length': 0.88, 'correct_response': None, 'nonmatch_pres_side': None}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
    Routine image_pres
    Routine sound_pres
    Routine ITI
    Routine break_3
  LoopTerminator trials
  Routine instructions_end
