PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = TSRlearn_main-task_block2-2
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine startup_settings
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    CodeComponent import_packages
      Code Type = Py
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      Begin Experiment:
        from pathlib import Path
        import csv
        import numpy as np
        import atexit

        from triggers import setParallelData
        setParallelData(0)
    CodeComponent function_definitions
      Code Type = Py
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      Begin Experiment:
        # log function that saves when import task events happen to log file
        def log(*msgs, sep=' ', end='\n'):
            log_file = u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'] + '_print.log')
            print(*msgs, sep=sep, end=end, flush=True)

            # Append to log file
            with open(log_file, 'a') as f:
                f.write(sep.join(str(msg) for msg in msgs) + end)

        from ast import literal_eval
        # function that matches position keywords to position (x,y - coord) tuples
        def resolve_pos(val):
            #Already a tuple/list/ndarray -> normalize to tuple
            if isinstance(val, (list, tuple, np.ndarray)):
                return tuple(val)
            # Name like "left_pos" -> look up
            if isinstance(val, str):
                name = val.strip()
                if name in POS:
                    return POS[name]
                # Or literal like "(-0.4, 0.2)" in the cell
                try:
                    parsed = literal_eval(name)
                    if isinstance(parsed, (list, tuple)) and len(parsed) == 2:
                        return tuple(parsed)
                except Exception:
                    pass
                    raise ValueError(f"Unrecognized position value: {val!r}")
                    raise TypeError(f"Unsupported position type: {type(val)}")
    CodeComponent exp_settings
      Code Type = Auto->JS
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      Begin Experiment:
        ## set main experimental variables

        # instruction language
        language = "english" # "french" or "english"

        # "Left" "right" etc. are the arrow keys on the key board
        # these are the keys for selecting the images in different positions
        left_key = "left"
        center_key = "up"
        right_key = "right"
        down_key = "down"

        # pos of images (x-coord, y-coord)
        left_pos   = (-0.2, 0.1)
        right_pos  = (0.2, 0.1)
        center_pos = (0.0, 0.1)
        prompt_pos = (0, -0.1)

        # pos of instructions to choose the next image
        instruc_pos = (0,0)

        # response time on learning trials
        max_response_time = 3 # [s]

        # feedback on learning trials
        feedback_steps  =  0.06   # steps out of 1 (percent)
        rest_jump       =  0.004 # abs distance to target pos
        animation_time   = 1.4    # [s]

        # breaks (indicate after which learning route you want task break)
        break_after_route = 10
        break_dur = 30 # [s]

        # replay breaks during learning
        replay_break_dur = 5
        trials_per_run = 13 # after 13 trials because we have 14 image sequences

        # number of learning runs
        # one run is 13 trials (learn 14-image sequence in pairs)
        n_learn_route = 6

        # duration of response time on retrieval tirals
        retr_dur = 5 # [s]

        # too slow message duration
        too_slow_dur = 0.5 # [s]

        # how long is retr question presented
        retrieval_quest_dur = 5 # [s]
        retr_dur_slider = 5 # [s]
        instr_newroute_dur = 1 # [s]
        #image_dur_retr = 1.5
        #fix_dur_retr = 0.5 are defined in condition file

        # timing for fast image presentations at the end
        fast_img_dur = 0.1 # [s]
        mask_dur = 0.048 # [s]
    CodeComponent bids_logging_functions
      Code Type = Py
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      Begin Experiment:
        # BIDS event logger (no Builder BIDS components needed bc they don't work that well)

        class BIDSLogger:
            def __init__(self, win, clock, default_cols=None):
                self.win = win
                self.clock = clock
                self.rows = []          # list of dicts -> will become events.tsv
                self.active = {}        # stim -> row index (for duration)
                self.defaults = default_cols or {}

                # fixed column order (for the .tsv file)
                self.col_order = [
                    "subject", "trial_type", "block_name", "sequence_name",
                    "route_num",
                    "trial_num",
                    "component_label",
                    "concept_label", "concept_exemplar",
                    "onset", "duration",
                    "type_of_stimulus",
                    "response_time", "response",
                    "response_meaning", "expected_response",
                    "correct", "distance_correct"
                ]

            # schedule logging of onset on the *next* flip (exactly when the stim appears)
            def schedule_onset(self, stim, **extra_cols):
                 # Onset: first frame it is STARTED
                if getattr(stim, "status", None) == STARTED and stim not in self.active:
                    # Builder already records exact onset on flip into tStartRefresh;
                    # fall back to current clock if that isn't available.
                    t_on = getattr(stim, "tStartRefresh", None)
                    if t_on is None:
                        t_on = self.clock.getTime()
                    row = {
                        "onset": float(t_on),
                        "duration": np.nan,
                    }
                    row.update(self.defaults)
                    row.update(extra_cols)
                    self.rows.append(row)
                    self.active[stim] = len(self.rows) - 1

            # to log the offset and therefore compute durations of components
            def mark_offset(self, stim):
                if getattr(stim, "status", None) == FINISHED and stim in self.active:
                    idx = self.active.pop(stim)
                    t_off = getattr(stim, "tStopRefresh", None)
                    if t_off is None:
                        t_off = self.clock.getTime()
                    self.rows[idx]["duration"] = float(t_off - self.rows[idx]["onset"])

            # log a one-shot event right now (no duration), e.g., button press
            def add_instant(self, given_name, **extra_cols):
                row = {"onset": float(self.clock.getTime()), "duration": 0.0,
                       "type_of_stimulus": given_name}
                row.update(self.defaults)
                row.update(extra_cols)
                self.rows.append(row)

            # write out a BIDS-like events.tsv
            def save(self, filename_base):
                out = Path(filename_base).with_suffix("")  # strip .csv/.log if present
                out = out.parent / (out.name + "_events.tsv")

                # union of all keys, but keep preferred order first
                all_keys = list(self.col_order)
                for r in self.rows:
                    for k in r.keys():
                        if k not in all_keys:
                            all_keys.append(k)

                with open(out, "w", newline="", encoding="utf-8") as f:
                    w = csv.DictWriter(f, fieldnames=all_keys, delimiter="\t", extrasaction="ignore")
                    w.writeheader()
                    for r in self.rows:
                        # convert Nones to "n/a" for BIDS friendliness
                        out_row = {k: ("n/a" if (r.get(k) is None or (isinstance(r.get(k), float) and np.isnan(r.get(k)))) else r.get(k))
                                   for k in all_keys}
                        w.writerow(out_row)

                return str(out)
        # set global clock as default because we need it for timing
        bids = None

        # atexit autosave: runs on normal finish AND on ESC (core.quit)
        def _bids_autosave():
            try:
                if bids and hasattr(bids, "rows"):
                    out = bids.save(thisExp.dataFileName)
                    print(f"[autosave] BIDS events written to: {out}")
            except Exception as e:
                print(f"[autosave] Failed to save BIDS events: {e}")
      Begin Routine:
        # Create the logger once
        bids = BIDSLogger(
            win=win,
            clock=globalClock,
            default_cols=dict(
                subject=expInfo.get("participant")
            )
        )

        # write a header-only file immediately so each start creates a file
        _ = bids.save(thisExp.dataFileName)

        # atexit autosave: runs on normal finish AND on ESC (core.quit)
        atexit.register(_bids_autosave)
    CodeComponent set_trigger_numbers
      Code Type = Auto->JS
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      Begin Routine:
        # trigger numbers
        # always event - number pairs

        trigger_dict = {
        "start/end": 255,
        "instruction_begin_block": 50,
        "image_selected": 51,
        "feedback": 52,
        "replay_break": 53,
        "question_retrieval": 54,
        "response_retrieval_options": 59,
        "response_retrieval": 55,
        "task_break_begin": 56,
        "task_break_end": 57,
        "instruction_end_block": 58
        }
    CodeComponent refine_positions
      Code Type = Auto->JS
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      Begin Routine:
        # make coordinates match with position description in excel file
        POS = {
            'left':   left_pos,
            'center': center_pos,
            'right':  right_pos
        }

        # Map positions to keys
        # (just so it's easier to access later)
        pos_to_key = {
            right_pos: right_key,
            center_pos: center_key,
            left_pos: left_key
        }
  Routine instructions_01
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    CodeComponent set_trigger_start
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock = core.Clock()
        trigOn = False
      Begin Routine:
        trigNumber = trigger_dict["start/end"]
      Each Frame:
        if frameN == 0 and not trigOn:
            win.callOnFlip(setParallelData, trigNumber)
            win.callOnFlip(trigClock.reset)
            trigOn = True

        if trigOn and trigClock.getTime() >= 0.01:  # 10 ms pulse
            setParallelData(0)
            trigOn = False
    CodeComponent bids_instruc
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part1,
                                trial_type="instruction",
                                type_of_stimulus="instruction_text",
                                component_label="instruction_part1")
      End Routine:
        bids.mark_offset(instruction_part1)
    TextComponent instruction_part1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part1_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part1.text = (
            "Now the main task starts. "
            "You will learn sequences of images. "
            "Remember to always choose the correct next image in the sequence with the arrow keys. "
            "Then you will respond to some retrieval questions.\n"
            "[Press the return key to continue.]"
        )


        if language == "german":
            instruction_part1.text = (
        "Jetzt beginnt die Hauptaufgabe. "
        "Sie lernen Bildsequenzen kennen. "
        "Denken Sie daran, immer das richtige neue Bild in der Sequenz mit den Pfeiltasten auszuwählen. "
        "Anschließend beantworten Sie einige Abfragefragen.\n"
        "[Drücken Sie die Eingabetaste, um fortzufahren.]")

        if language == "french":
           instruction_part1.text = (
           "Maintenant, la tâche principale commence. "
        "Vous allez apprendre des séquences d'images. "
        "N'oubliez pas de toujours choisir la bonne nouvelle image dans la séquence à l'aide de la touche fléchée. "
        "Vous répondrez ensuite à quelques questions de rappel.\n"
        "[Appuyez sur la touche Entrée pour continuer.]")
    KeyboardComponent continue_button
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_02
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    CodeComponent bids_instruc_2
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part2,
                                type_of_stimulus="instructions",
                                component_label="instruction_part2")
      End Routine:
        bids.mark_offset(instruction_part2)
    TextComponent instruction_part2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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    CodeComponent instructions_part2_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part2.text = (
            "Please try to think of a story to remember the learned images. "
            "Respond as fast and as accurately as possible.\n"
            "[Press the return key to start the task.]"
            )


        if language == "german":
            instruction_part2.text = (
        "Versuchen Sie sich eine Geschichte auszudenken, um sich die gelernten Bilder zu merken. "
        "Antworten Sie so schnell und so genau wie möglich.\n"
        "[Drücken Sie die Eingabetaste, um die Aufgabe zu beginnen.]"
            )

        if language == "french":
           instruction_part2.text = (
            "Essayez de trouver une histoire pour vous souvenir des images apprises. "
        "Répondez aussi vite et aussi précisément que possible.\n"
        "[Appuyez sur la touche Entrée pour commencer l'exercice.]")
    KeyboardComponent continue_button_2
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_03
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    CodeComponent bids_instruc_3
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part3,
                                type_of_stimulus="instructions",
                                component_label="instruction_part3")
      End Routine:
        bids.mark_offset(instruction_part3)
    TextComponent instruction_part3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instructions_part3_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part3.text = (
           "At the beginning, you do not yet know the correct pairings. "
           "You will learn it step by step through trial and feedback. "
            "Press the return key to continue. "
            )


        if language == "german":
            instruction_part3.text = (
            "Zu Beginn kennen Sie die richtige Abfolge noch nicht. "
            "Sie werden sie Schritt für Schritt durch Ausprobieren und Feedback erlernen. "
            "Drücken Sie die Eingabetaste, um weiterzumachen."
            )

        if language == "french":
            instruction_part3.text = (
        "Au début, vous ne connaissez pas encore les associations correctes. "
        "Vous les apprendrez étape par étape, à force d'essais et de retours d'expérience. "
        "Appuyez sur la touche Entrée pour continuer. ")
    KeyboardComponent continue_button_3
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_04
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    CodeComponent bids_instruc_4
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part4,
                                type_of_stimulus="instructions",
                                component_label="instruction_part4")
      End Routine:
        bids.mark_offset(instruction_part4)
    TextComponent instruction_part4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part4_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part4.text = (
        "During the task, learning phases and question phases will alternate. "
        "You will first learn associations between images. "
        "After each learning phase, you will be asked questions about the image associations you just learned. "
        "Then you will return to learning image associations, followed again by questions. "
        "To help you remember the image associations and their order, try to imagine a short story that links the images together."
        "Press the return key to continue. ")



        if language == "german":
            instruction_part4.text = (
        "Während der Aufgabe wechseln sich Lernphasen und Fragephasen ab. "
        "Zunächst lernen Sie Assoziationen zwischen Bildern. "
        "Nach jeder Lernphase werden Ihnen Fragen zu den Bildzuordnungen gestellt, die Sie gerade gelernt haben. "
        "Anschließend kehren Sie wieder zum Lernen der Bildzuordnungen zurück, gefolgt von weiteren Fragen. "
        "Um sich die Bildzuordnungen und ihre Reihenfolge besser zu merken, "
        "stellen Sie sich bitte eine kurze Geschichte vor, die die Bilder miteinander verbindet. "
        "Drücken Sie die Eingabetaste, um fortzufahren."
        )

        if language == "french":
            instruction_part4.text = (
        "Pendant la tâche, des phases d’apprentissage et des phases de questions alterneront. "
        "Vous apprendrez d’abord des associations entre des images. "
        "Après chaque phase d’apprentissage, des questions vous seront posées sur les associations d’images que vous venez d’apprendre. "
        "Vous reviendrez ensuite à l’apprentissage des associations d’images, suivi à nouveau de questions. "
        "Pour vous aider à mémoriser les associations d’images et leur ordre, "
        "essayez d’imaginer une courte histoire qui relie les images entre elles. "
        "Appuyez sur la touche Entrée pour continuer."
        )
    KeyboardComponent continue_button_4
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_05
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    CodeComponent bids_instruc_5
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part4,
                                type_of_stimulus="instructions",
                                component_label="instruction_part4")
      End Routine:
        bids.mark_offset(instruction_part4)
    TextComponent instruction_part5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part5_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part5.text = (
            "First, you will practice the learning trials: "
            "The current picture is shown at the bottom of the screen. "
            "Three possible options appear at the top. "
            "Choose the picture you think comes next in the sequence. "
            "Press the return key to start the practice trials."
            )

        if language == "french":
            instruction_part5.text = (
        "Tout d'abord, vous allez vous entraîner à l'aide d'exercices d'apprentissage : "
        "L'image actuelle s'affiche en bas de l'écran. "
        "Trois options possibles apparaissent en haut. "
        "Choisissez l'image qui, selon vous, vient ensuite dans la séquence. "
        "Appuyez sur la touche Entrée pour continuer."
        )

        if language == "german":
            instruction_part5.text = (
        "Zunächst üben Sie die Lerndurchgänge: "
        "Unten auf dem Bildschirm sehen Sie das aktuelle Bild. "
        "Oben erscheinen drei Auswahlmöglichkeiten. "
        "Wählen Sie das Bild, von dem Sie denken, dass es als Nächstes folgt. "
        "Drücken Sie die Eingabetaste, um mit den Übungsdurchgängen zu beginnen. "
        )
    KeyboardComponent continue_button_5
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine practice_learn_choice
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    ImageComponent prompt_prc
      image [set every repeat] = $promptFile
      pos [set every repeat] = prompt_pos
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent dist_01_prc
      image [set every repeat] = $dist_01File
      pos [set every repeat] = resolve_pos(dist01_pos)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent dist_02_prc
      image [set every repeat] = $dist_02File
      pos [set every repeat] = resolve_pos(dist02_pos)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent correct_prc
      image [set every repeat] = $correctFile
      pos [set every repeat] = resolve_pos(correct_pos)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_prc
      allowedKeys = left_key, center_key, right_key
      correctAns = $correct_ans
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_response_time
      store = first key
      syncScreenRefresh = False
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    TextComponent instructions_choose_prc
      letterHeight = 0.04
      pos = instruc_pos
      startVal [time (s)] = 0.0
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    CodeComponent instructions_choose_txt_prc
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instructions_choose_prc.text = (
            "Choose the next image in the sequence!")

        if language == "german":
            instructions_choose_prc.text = (
            "Wählen Sie das nächste Bild in der Sequenz!")

        if language == "french":
            instructions_choose_prc.text = (
            "Choisissez l'image suivante dans la séquence !")
    CodeComponent code_prc
      Code Type = Auto->JS
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      Begin Routine:
        # determine which one is correct response on this trial
        # might need later
        correctAnsKey = pos_to_key[resolve_pos(correct_pos)]

        # start a clock to time out routine if necessary
        routClock = core.Clock()
        routClock.reset()

        # initialize
        responded = False
        key_resp_prc.keys = []
        key_resp_prc.rt = None

        # this attribute needs to also exist otherwise there is error
        key_resp_prc.duration = None
      Each Frame:
        # timeout case
        if routClock.getTime() >= max_response_time:
            # no key was pressed in time
            key_resp_prc.keys = None
            key_resp_prc.rt = None
            responded = False
            continueRoutine = False
            key_resp_prc.corr = None
            # (optionally store that it was a timeout)

        # if there is key selection
        if key_resp_prc.keys:
                key_resp_prc.corr = 1 if key_resp_prc.keys == correctAnsKey else 0
                responded = True
                continueRoutine = False
  Routine practice_learn_feedback
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    CodeComponent animation_control_prc
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize animation control
        endY = prompt_pos[1]    # end y-coor of moving image
        endX = prompt_pos[0]    # end x-coord of moving image

        maxAnimationDur = int(round(animation_time * expInfo['frameRate']))
        animationTimer = 0      # initialize variable
        animationDone = False   # initialize variable
        moveCorrect = False     # initialize variable
      Each Frame:
        # Start animation
        if not moveCorrect and not animationDone:
            moveCorrect = True

        # Run animation
        if moveCorrect and not animationDone:
            animationTimer += 1

            # Current position
            current_x, current_y = correct_prc_2.pos

            # Compute direction toward target
            dx = endX - current_x
            dy = endY - current_y

            # Move a small fraction toward target
            move_fraction = feedback_steps # % of the remaining distance each frame
            new_x = current_x + dx * move_fraction
            new_y = current_y + dy * move_fraction

            # Update position
            correct_prc_2.setPos((new_x, new_y))

            # Stop when close enough to target
            if (abs(dx) < rest_jump and abs(dy) < rest_jump) or animationTimer > maxAnimationDur:
            # if (abs(dx) < rest_jump and abs(dy) < rest_jump):
                correct_prc_2.setPos((endX, endY))
                animationDone = True
                moveCorrect = False
                continueRoutine = False
    ImageComponent prompt_prc_2
      image [set every repeat] = $promptFile
      pos [set every repeat] = prompt_pos
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent dist_01_prc_2
      image [set every repeat] = $dist_01File
      pos [set every repeat] = resolve_pos(dist01_pos)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent dist_02_prc_2
      image [set every repeat] = $dist_02File
      pos [set every repeat] = resolve_pos(dist02_pos)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent correct_prc_2
      image [set every repeat] = $correctFile
      pos [set every repeat] = resolve_pos(correct_pos)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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  Routine instruction_06
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    CodeComponent bids_instruc_6
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part6,
                                type_of_stimulus="instructions",
                                component_label="instruction_part6")
      End Routine:
        bids.mark_offset(instruction_part4)
    TextComponent instruction_part6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part6_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part6.text = (
            "Now you will practice the retrieval questions: "
            "Press the return key to continue."
            )



        if language == "german":
            instruction_part6.text = (
        "Sie werden nun den Gedächtnisabruf üben. Drücke Sie die Eingabetaste, um weiterzumachen."
        )

        if language == "french":
                instruction_part6.text = (
        "Vous allez maintenant vous exercer à la récupération de mémoire. "
        "Appuyez sur la touche Entrée pour continuer."
        )
    KeyboardComponent continue_button_6
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine practice_retrival_question
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    TextComponent question_retrieval_prc
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent text_question_retrieval_prc
      Code Type = Auto->JS
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      Begin Routine:
        if language=="english":

            if trial_type == 1:
                question_retrieval_prc.text = (
                "Please indicate whether the following two images appeared in this order in the learned sequence. "
                "If yes, press the left arrow key. If no, press the right arrow key. "
             )
            if trial_type == 2:
                question_retrieval_prc.text = (
                "You will see one image and then a pair of images. Please indicate which of the images is "
                "closer to the image presented first. Resond with the left and right arrow key. "
               )
            if trial_type==3:
               question_retrieval_prc.text = (
               "You will see two images. Please indicate how many images lie between them in the learned sequence. "
                "Move the slider with the left and right arrow key. Log in your response with the return key."
           )

        if language == "french":

            if trial_type == 1:
                question_retrieval_prc.text = (
                "Veuillez indiquer si les deux images suivantes sont apparues dans cet ordre "
                "dans la séquence apprise. "
                "Si oui, appuyez sur la flèche gauche. Si non, appuyez sur la flèche droite. "
                )

            if trial_type == 2:
                question_retrieval_prc.text = (
                "Vous verrez d’abord une image, puis une paire d’images. "
                "Veuillez indiquer laquelle des deux images est la plus proche "
                "de l’image présentée en premier. "
                "Répondez à l’aide des flèches gauche et droite. "
                )

            if trial_type == 3:
                question_retrieval_prc.text = (
                "Vous verrez deux images. "
                "Veuillez indiquer combien d’images se trouvent entre elles "
                "dans la séquence apprise. "
                "Déplacez le curseur à l’aide des flèches gauche et droite. "
                "Validez votre réponse avec la touche Entrée."
                )

        if language=="german":

            if trial_type == 1:
                question_retrieval_prc.text = (
                "Bitte geben Sie an, ob die folgenden beiden Bilder in dieser Reihenfolge in der gelernten Reihenfolge vorkamen."
                "Wenn ja, drücken Sie die linke Pfeiltaste. Wenn nein, drücken Sie die rechte Pfeiltaste."
                )
            if trial_type == 2:
                question_retrieval_prc.text = (
                "Sie sehen ein Bilder und zwei weitere. Bitte geben Sie an, welches der beiden Bilder näher an dem "
                "zuerst präsentierten Bild liegt. "
                "Antworten Sie mit der linken und rechten Pfeiltaste. "
                )
            if trial_type==3:
               question_retrieval_prc.text = (
               "Sie werden zwei Bilder sehen. Bitte geben Sie an, wie viele Bilder in der gelernten Reihenfolge zwischen diesen beiden liegen. "
                "Bewegen Sie den Slider mit den Pfeiltasten. "
                "Loggen Sie ihre Antwort mit der Eingabetaste ein. "
                )
    KeyboardComponent continue_button_7
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.5
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  Routine practice_retrieval_first_image
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    ImageComponent image_1_prc
      image [set every repeat] = $img_first
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr
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  Routine practice_retrieval_fix_cross_01
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    TextComponent fix_cross_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fix_dur_retr
      text = +
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  Routine practice_retrieval_second_image
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    CodeComponent ctrl_third
      Code Type = Auto->JS
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      Begin Routine:
        showThird = (trial_type==2)
        image_3_prc.setAutoDraw(False)

        if showThird:
            image_3_prc.setImage(img_third);
            image_3_prc.setPos((0.13, 0))
            image_3_prc.setAutoDraw(True);

            image_2_prc.setPos((-0.13,0))

        else:
            image_2_prc.setPos((0, 0))
    ImageComponent image_2_prc
      image [set every repeat] = $img_second
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr
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    ImageComponent image_3_prc
      image [set every repeat] = $img_third
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr
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  Routine practice_retrieval_fix_cross_02
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    TextComponent fix_cross_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fix_dur_retr
      text = +
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  Routine practice_retrieval_response
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    CodeComponent set_comp_visibility_prc
      Code Type = Both
      Begin JS Routine:
        slider_type3.size = [0, 0];
        for (var stim, _pj_c = 0, _pj_a = [image_1_prc_rpt, opt_left_img_prc, opt_right_img_prc, yes_txt_prc, no_txt_prc], _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            stim = _pj_a[_pj_c];
            stim.setOpacity(0);
        }
        if ((trial_type === 1)) {
            yes_txt_prc.setOpacity(1);
            no_txt_prc.setOpacity(1);
            resp_prc.keys = [];
            resp_prc.rt = [];
            resp_prc.clock.reset();
            resp_prc.keys = null;
            resp_prc.clearEvents();
            resp_prc.allowKeys = ["left", "right"];
        } else {
            if ((trial_type === 2)) {
                image_1_prc_rpt.setImage(img_first);
                opt_left_img_prc.setImage(opt_left);
                opt_right_img_prc.setImage(opt_right);
                opt_left_img_prc.setOpacity(1);
                opt_right_img_prc.setOpacity(1);
                image_1_prc_rpt.setOpacity(1);
                resp_prc.keys = [];
                resp_prc.rt = [];
                resp_prc.allowKeys = ["left", "right"];
            } else {
                if ((trial_type === 3)) {
                    slider_type3.size = [(- 0.5), 0.05];
                    slider_type3.setMarkerPos(3);
                    slider_response.keys = [];
                    slider_response.rt = [];
                    resp_prc.clock.reset();
                    resp_prc.allowKeys = null;
                    resp_prc.clearEvents();
                }
            }
        }
      Begin Routine:
        # Hide all by default
        slider.size = (0, 0)

        for stim in [image_1_prc_rpt, opt_left_img_prc, opt_right_img_prc, yes_txt_prc, no_txt_prc]:
            stim.setOpacity(0)

        # Decide which UI to show
        if trial_type == 1:
            # Yes/No
            yes_txt_prc.setOpacity(1)
            no_txt_prc.setOpacity(1)
            resp_prc.keys = []
            resp_prc.rt = []
            resp_prc.clock.reset()
            resp_prc.keys = None
            resp_prc.clearEvents()
            resp_prc.allowKeys = ['left','right']  # or ['left', 'right'] if you use arrows

        elif trial_type == 2:
            # Two-image 2AFC
            image_1_prc_rpt.setImage(img_first)
            opt_left_img_prc.setImage(opt_left)
            opt_right_img_prc.setImage(opt_right)
            opt_left_img_prc.setOpacity(1)
            opt_right_img_prc.setOpacity(1)
            image_1_prc_rpt.setOpacity(1)

            resp_prc.keys = []
            resp_prc.rt = []
            resp_prc.allowKeys = ['left','right']

        elif trial_type == 3:
            # 1–4 keypad (Text or an image of keypad)
            slider.size = (0.6, 0.07)

            resp_prc.keys = []
            resp_prc.rt = []
            resp_prc.clock.reset()
            resp_prc.keys = None
            resp_prc.clearEvents()
            resp_prc.allowKeys = ['left','right']
      Each JS Frame:
        if (trial_type === 3) {

            if (slider_response.keys) {
                let key = slider_response.keys;

                if (key === 'left') {
                    slider_type3.setMarkerPos(slider_type3.markerPos - 1);
                }

                else if (key === 'right') {
                    slider_type3.setMarkerPos(slider_type3.markerPos + 1);
                }

                else if (key === 'return') {
                    continueRoutine = false;
                }
            }

            // Reset key buffer
            slider_response.keys = undefined;
        }
    ImageComponent image_1_prc_rpt
      pos = (0, 0.16)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur
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    ImageComponent opt_left_img_prc
      pos = (-0.1, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur
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    ImageComponent opt_right_img_prc
      pos = (0.1, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur
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    TextComponent yes_txt_prc
      letterHeight = 0.05
      pos = (-0.1, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur
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    TextComponent no_txt_prc
      letterHeight = 0.05
      pos = (0.1, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur
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    CodeComponent set_option_text
      Code Type = Auto->JS
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      Begin Routine:
        if trial_type == 1:
            if language == "english":
                yes_txt_prc.text = ("yes")
                no_txt_prc.text = ("no")
            if language == "german":
                yes_txt_prc.text = ("ja")
                no_txt_prc.text = ("nein")
            if language == "french":
                yes_txt_prc.text = ("oui")
                no_txt_prc.text = ("non")
    KeyboardComponent resp_prc
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = retr_dur
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    CodeComponent set_correct_resp_prc
      Code Type = Auto->JS
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      Each Frame:
        if trial_type == 2 and resp_prc.keys:
            continueRoutine = False
        if trial_type == 1 and resp_prc.keys:
            continueRoutine = False
      End Routine:
        # Determine correctness
        correct_bin = 0

        if trial_type == 1:
            if resp_prc.keys in [correct_key]:
                correct_bin = 1

        elif trial_type == 2:
            if resp_prc.keys == correct_side:
                correct_bin = 1

        elif trial_type == 3:
            if slider.markerPos == (distance_correct):
                correct_bin = 1
    SliderComponent slider
      fillColor = -1.0000, -1.0000, -1.0000
      font = Noto Sans
      forceEndRoutine = False
      granularity = 0
      initVal = 0
      labels = "0","1","2","3","4"
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur_slider
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = [0,1,2,3,4]
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    CodeComponent controlslider_pos
      Code Type = Auto->JS
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      Each Frame:
        if slider.markerPos is None:
            # sets to our first position (or a random number?)
            # and makes marker visible
            slider.markerPos = 3

        #check keys (just the ones we want)
        keysPressed = resp_prc.getKeys(['left', 'right', 'return'])
        for key in keysPressed:
            if key == 'left':
                slider.markerPos -= 1  # subtract 1
            elif key == 'right':
                slider.markerPos += 1  # 1
            elif key == 'return':
                # confirm rating by setting to current markerPos
                slider.rating= slider.markerPos
                continueRoutine = False
  Routine instruction_start
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    CodeComponent bids_instruc_8
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part8,
                                type_of_stimulus="instructions",
                                component_label="instruction_part5")
      End Routine:
        bids.mark_offset(instruction_part5)
    TextComponent instruction_part8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part8_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part5.text = (
            "Practice is over. The main experiment starts now. "
            "Remember to choose the next image in the "
            "sequence from the three options. During breaks, "
            "please try to rest and not think of anything in particular. "
            "It's okay if the learned sequence comes to mind; "
            "we're studying memory under natural conditions. "
            "Press any button to continue."
            )


        if language == "german":
            instruction_part5.text = (
          "Die Übungsphase ist beendet. Das Hauptexperiment beginnt jetzt. "
          "Denken Sie daran, das nächste Bild in der Reihenfolge aus den drei Optionen auszuwählen. "
          "Ruhen Sie sich in den Pausen aus und versuchen Sie, an nichts Bestimmtes zu denken. "
          "Es ist in Ordnung, wenn Ihnen die gelernte Sequenz in den Sinn kommt; "
          "wir untersuchen Gedächtnis unter natürlichen Bedingungen. "
          "Drücken Sie eine beliebige Taste, um fortzufahren."
        )
    KeyboardComponent continue_button_9
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine choice_display
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    CodeComponent set_trigger_image
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock = core.Clock()
        trigOn = False
      Each Frame:
        if prompt.status == NOT_STARTED and not trigOn and tThisFlip >= 0.0 - frameTolerance:
            win.callOnFlip(setParallelData, promptTrigNumber)
            win.callOnFlip(trigClock.reset)
            trigOn = True

        if trigOn and trigClock.getTime() >= 0.01:  # 10 ms pulse
            setParallelData(0)
            trigOn = False

        if correct.status == NOT_STARTED and not trigOn and tThisFlip >= 0.0 - frameTolerance:
            win.callOnFlip(setParallelData, correctTrigNumber)
            win.callOnFlip(trigClock.reset)
            trigOn = True

        if trigOn and trigClock.getTime() >= 0.01:  # 10 ms pulse
            setParallelData(0)
            trigOn = False

        if dist_01.status == NOT_STARTED and not trigOn and tThisFlip >= 0.0 - frameTolerance:
            win.callOnFlip(setParallelData, dist01TrigNumber)
            win.callOnFlip(trigClock.reset)
            trigOn = True

        if trigOn and trigClock.getTime() >= 0.01:  # 10 ms pulse
            setParallelData(0)
            trigOn = False

        if dist_02.status == NOT_STARTED and not trigOn and tThisFlip >= 0.0 - frameTolerance:
            win.callOnFlip(setParallelData, dist02TrigNumber)
            win.callOnFlip(trigClock.reset)
            trigOn = True

        if trigOn and trigClock.getTime() >= 0.01:  # 10 ms pulse
            setParallelData(0)
            trigOn = False
    CodeComponent bids_choice_disp
      Code Type = Auto->JS
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      Begin Routine:
        # which item sits where on THIS trial
        pos2item = {}
        pos2item[correct_pos]   = 'target'
        pos2item[dist01_pos] = 'distractor_01'
        pos2item[dist02_pos] = 'distractor_02'

        # key -> position mapping
        key2pos = {
            left_key:   'left',
            right_key:  'right',
            center_key: 'up'
        }
      Each Frame:
        ## schedule bids trigger setting
        bids.schedule_onset(prompt, type_of_stimulus="image",
        component_label="current_image",
        trial_type = "learn",
        concept_label = promptFile.partition("/")[-1],
        concept_exemplar = promptFile.partition("/")[-1],
        block_name=block,
        sequence_name=learningSeq,
        route_num=runIndexWithinSeq,
        trial_num=currPosInSeq)

        bids.schedule_onset(correct, type_of_stimulus="image",
        component_label="corr_next_image",
        trial_type = "learn",
        concept_label = correctFile.partition("/")[-1],
        concept_exemplar = correctFile.partition("/")[2],
        block_name=block,
        sequence_name=learningSeq,
        route_num=runIndexWithinSeq,
        trial_num=currPosInSeq)

        bids.schedule_onset(dist_01, type_of_stimulus="image",
        component_label="distractor 01 (close)",
        concept_label = dist_01File.partition("/")[-1],
        trial_type = "learn",
        concept_exemplar = dist_01File.partition("/")[-1],
        block_name=block,
        sequence_name=learningSeq,
        route_num=runIndexWithinSeq,
        trial_num=currPosInSeq)

        bids.schedule_onset(dist_02, type_of_stimulus="image",
        component_label="distractor 02 (far)",
        concept_label = dist_02File.partition("/")[-1],
        trial_type = "learn",
        concept_exemplar = dist_02File.partition("/")[-1],
        block_name=block,
        sequence_name=learningSeq,
        route_num=runIndexWithinSeq,
        trial_num=currPosInSeq)
      End Routine:
        bids.mark_offset(prompt)
        bids.mark_offset(correct)
        bids.mark_offset(dist_01)
        bids.mark_offset(dist_02)

        # response neeeds to be saved at end of trial
        pressed = key_resp.keys
        if isinstance(pressed, list):
            pressed = pressed[-1] if pressed else "m"

        chosen_pos  = key2pos.get(pressed, None)
        chosen_item = pos2item.get(chosen_pos, None)

        is_correct = (chosen_item == 'target') if chosen_item is not None else None

        bids.add_instant(
            "choice",
            trial_type = "learn",
            block_name=block,
            sequence_name=learningSeq,
            route_num=runIndexWithinSeq,
            trial_num=currPosInSeq,
            response=(key_resp.keys if key_resp.keys else "m"),
            response_time=(key_resp.rt if hasattr(key_resp, "rt") else None),
            correct=is_correct,
            expected_response = correct_ans,
            response_meaning = chosen_item
        )
    ImageComponent prompt
      image [set every repeat] = $promptFile
      pos [set every repeat] = prompt_pos
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent dist_01
      image [set every repeat] = $dist_01File
      pos [set every repeat] = resolve_pos(dist01_pos)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent dist_02
      image [set every repeat] = $dist_02File
      pos [set every repeat] = resolve_pos(dist02_pos)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent correct
      image [set every repeat] = $correctFile
      pos [set every repeat] = resolve_pos(correct_pos)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = left_key, center_key, right_key
      correctAns = $correct_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_response_time
      store = first key
      syncScreenRefresh = False
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    CodeComponent get_response_parameters
      Code Type = Auto->JS
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      Begin Routine:
        # determine which one is correct response on this trial
        # might need later
        correctAnsKey = pos_to_key[resolve_pos(correct_pos)]

        # start a clock to time out routine if necessary
        routClock = core.Clock()
        routClock.reset()

        # initialize
        responded = False
        key_resp.keys = []
        key_resp.rt = None

        # this attribute needs to also exist otherwise there is error
        key_resp.duration = None
      Each Frame:
        # timeout case
        if routClock.getTime() >= max_response_time:
            # no key was pressed in time
            key_resp.keys = None
            key_resp.rt = None
            responded = False
            continueRoutine = False
            key_resp.corr = None
            # (optionally store that it was a timeout)
            #log('response too slow')

        # if there is key selection
        if key_resp.keys:
                key_resp.corr = 1 if key_resp.keys == correctAnsKey else 0
                responded = True
                #log('response, correct: ', key_resp.corr)
                continueRoutine = False
    TextComponent instructions_choose
      letterHeight = 0.03
      pos = instruc_pos
      startVal [time (s)] = 0.0
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    CodeComponent instructions_choose_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instructions_choose.text = (
                "Choose the next image in the sequence!"
            )

        if language == "german":
            instructions_choose.text = (
                "Wähle das nächste Bild in der Sequenz!"
            )

        if language == "french":
            instructions_choose.text = (
                "Choisissez l’image suivante dans la séquence !"
            )
    CodeComponent set_trigger_response
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock = core.Clock()
      Begin Routine:
        response_trigger = trigger_dict["image_selected"]
        resp_trig_giv = False
      Each Frame:
        if key_resp.keys and not trigOn and not resp_trig_giv:
            setParallelData(response_trigger)
            trigClock.reset()
            trigOn = True
            resp_trig_giv=True

        if trigOn and trigClock.getTime() >= 0.01:  # 10 ms pulse
            setParallelData(0)
            trigOn = False
  Routine feedback
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    CodeComponent animation_control
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize animation control
        endY = prompt_pos[1]    # end y-coor of moving image
        endX = prompt_pos[0]    # end x-coord of moving image

        maxAnimationDur = int(round(animation_time * expInfo['frameRate']))
        animationTimer = 0      # initialize variable
        animationDone = False   # initialize variable
        moveCorrect = False     # initialize variable
      Each Frame:
        # Start animation
        if not moveCorrect and not animationDone:
            moveCorrect = True

        # Run animation
        if moveCorrect and not animationDone:
            animationTimer += 1

            # Current position
            current_x, current_y = correct_2.pos

            # Compute direction toward target
            dx = endX - current_x
            dy = endY - current_y

            # Move a small fraction toward target
            move_fraction = feedback_steps # % of the remaining distance each frame
            new_x = current_x + dx * move_fraction
            new_y = current_y + dy * move_fraction

            # Update position
            correct_2.setPos((new_x, new_y))

            # Stop when close enough to target
            if (abs(dx) < rest_jump and abs(dy) < rest_jump) or animationTimer > maxAnimationDur:
            # if (abs(dx) < rest_jump and abs(dy) < rest_jump):
                correct_2.setPos((endX, endY))
                animationDone = True
                moveCorrect = False
                continueRoutine = False
    CodeComponent bids_feedback_disp
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting
        bids.schedule_onset(correct_2,
        type_of_stimulus="feedback",
        component_label="correct_moving",
        trial_type = "learn",
        block_name=block,
        sequence_name=learningSeq,
        route_num=runIndexWithinSeq,
        trial_num=currPosInSeq)
      End Routine:
        bids.mark_offset(correct_2)
    ImageComponent prompt_2
      image [set every repeat] = $promptFile
      pos [set every repeat] = prompt_pos
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent dist_01_2
      image [set every repeat] = $dist_01File
      pos [set every repeat] = resolve_pos(dist01_pos)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent dist_02_2
      image [set every repeat] = $dist_02File
      pos [set every repeat] = resolve_pos(dist02_pos)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent correct_2
      image [set every repeat] = $correctFile
      pos [set every repeat] = resolve_pos(correct_pos)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    CodeComponent pport_trigger_feedback_disp
      Code Type = Auto->JS
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      Begin Routine:
        feedback.trigger_sent = False
      Each Frame:
        # feedback onset
        feedback_trigger = trigger_dict["feedback"]
        if moveCorrect and not feedback.trigger_sent and not trigOn:
            setParallelData(feedback_trigger)
            feedback.trigger_sent = True
            trigClock.reset()
            trigOn = True


        if trigOn and trigClock.getTime() >= 0.01:  # 10 ms pulse
            setParallelData(0)
            trigOn = False
  Routine rest_period
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    CodeComponent definition_breaks
      Code Type = Auto->JS
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      Begin Routine:
        #if total_trial_number not in break_points_routes:
        if (learning_trials.thisN + 1) % trials_per_run:
           continueRoutine = False
    CodeComponent bids_break_logging
      Code Type = Auto->JS
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      Each Frame:
        # log onset at first frame
        bids.schedule_onset(
            fix_cross,
            type_of_stimulus="replay_break",
            block_name = block,
            route_num=runIndexWithinSeq,
            component_label="fix_cross_replay_break",
            trial_type = "learn",
            sequence_name=learningSeq,
            trial_num=currPosInSeq)
      End Routine:
        # log offset at last frame of routine

        bids.mark_offset(fix_cross)
    CodeComponent set_trigger_rest
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock = core.Clock()
        trigOn = False
      Each Frame:
        replayTrigger = trigger_dict["replay_break"]

        if fix_cross.status == NOT_STARTED and not trigOn and tThisFlip >= 0.0 - frameTolerance:
            win.callOnFlip(setParallelData, replayTrigger)
            win.callOnFlip(trigClock.reset)
            trigOn = True

        if trigOn and trigClock.getTime() >= 0.01:  # 10 ms pulse
            setParallelData(0)
            trigOn = False
    TextComponent fix_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = replay_break_dur
      text = +
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  Routine task_break
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    CodeComponent skip_4
      Code Type = Auto->JS
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      Begin Routine:
        if _skipAllRoutinesThisTrial:
            continueRoutine = False
    CodeComponent determine_break_start
      Code Type = Auto->JS
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      Begin Routine:
        if (route_num == break_after_route and trial_num == break_interval):
            continueRoutine = True
        elif block_name == "Block 3":
            continueRoutine = False
        else:
            continueRoutine = False
    CodeComponent bids_longbreak_logging
      Code Type = Auto->JS
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      Each Frame:
        # log onset at first frame

        bids.schedule_onset(break_instruction,
            type_of_stimulus="long_break",
            block_name = block_name,
            component_label="instruction_task_break")
      End Routine:
        # log offset at last frame of routine

        bids.mark_offset(break_instruction)
    CodeComponent trigger_long_break_start
      Code Type = Auto->JS
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      Each Frame:
        # break start
        if break_instruction.status == NOT_STARTED and tThisFlip >= 0.0-frameTolerance:
            send_onset_trigger(break_instruction, 92)
    TextComponent break_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = break_dur
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    CodeComponent trigger_long_break_end
      Code Type = Auto->JS
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      Each Frame:
        if break_instruction.tStartRefresh:
            elapsed = tThisFlipGlobal - break_instruction.tStartRefresh
            remaining = max(0, break_dur - elapsed)

            if remaining == 0:
                # break end
                send_trigger(93)
                core.wait(0.01)
    CodeComponent set_break_text
      Code Type = Auto->JS
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      Begin Experiment:
        if language=="german":
           break_instruction.text = (
           "Kurze Pause. Es geht gleich weiter.")
        if language=="english":
            break_instruction.text = (
            "Short break. The task will continue soon")
  Routine prompt_question
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    CodeComponent set_trigger_retr_question
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock = core.Clock()
      Begin Routine:
        trigOn = False
      Each Frame:
        QuesTrig = trigger_dict["question_retrieval"]

        if question_retrieval.status == NOT_STARTED and not trigOn and tThisFlip >= 0.0 - frameTolerance:
            win.callOnFlip(setParallelData, QuesTrig)
            win.callOnFlip(trigClock.reset)
            trigOn = True

        if trigOn and trigClock.getTime() >= 0.01:  # 10 ms pulse
            setParallelData(0)
            trigOn = False
    CodeComponent bids_retr_question
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(
            question_retrieval,
            type_of_stimulus="text",
            component_label="retrieval_question",
            trial_type="retr_" + str(trial_type),
            block_name=block,
            sequence_name=learningSeq,
            trial_num=retrieval_trials.thisN,
            distance_correct=distance_correct
        )
      End Routine:
        bids.mark_offset(question_retrieval)
    TextComponent question_retrieval
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retrieval_quest_dur
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    CodeComponent text_question_retrieval
      Code Type = Auto->JS
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      Begin Routine:
        if language=="english":

            if trial_type == 1:
                question_retrieval.text = (
                "Please indicate whether the following two images appeared in this order in the learned sequence. "
                "If yes, press the left arrow key. If no, press the right arrow key. "
             )
            if trial_type == 2:
                question_retrieval.text = (
                "You will see one image and then a pair of images. Please indicate which image from the pair is "
                "closer to the image presented first. Respond with the left and right arrow key. "
               )
            if trial_type==3:
               question_retrieval.text = (
               "You will see two images. Please indicate how many images lie between them in the learned sequence. "
               "Use the left and right arrow keys to move the slider, and press Return to confirm your response."
           )

        if language == "french":

            if trial_type == 1:
                question_retrieval.text = (
                "Veuillez indiquer si les deux images suivantes sont apparues dans cet ordre "
                "dans la séquence apprise. "
                "Si oui, appuyez sur la flèche gauche. Si non, appuyez sur la flèche droite. "
                )

            if trial_type == 2:
                question_retrieval.text = (
                "Vous verrez d’abord une image, puis une paire d’images. "
                "Veuillez indiquer laquelle des deux images est la plus proche "
                "de l’image présentée en premier. "
                "Répondez à l’aide des flèches gauche et droite. "
                )

            if trial_type == 3:
                question_retrieval.text = (
                "Vous verrez deux images. "
                "Veuillez indiquer combien d’images se trouvent entre elles "
                "dans la séquence apprise. "
                "Déplacez le curseur à l’aide des flèches gauche et droite. "
                "Validez votre réponse avec la touche Entrée."
                )

        if language=="german":

            if trial_type == 1:
                question_retrieval.text = (
                "Bitte geben Sie an, ob die folgenden beiden Bilder in dieser Reihenfolge in der gelernten Reihenfolge vorkamen."
                "Wenn ja, drücken Sie die linke Pfeiltaste. Wenn nein, drücken Sie die rechte Pfeiltaste."
                )
            if trial_type == 2:
                question_retrieval.text = (
                "Sie sehen ein Bilder und zwei weitere. Bitte geben Sie an, welches der beiden Bilder näher an dem "
                "zuerst präsentierten Bild liegt. "
                "Antworten Sie mit der linken und rechten Pfeiltaste. "
                )
            if trial_type==3:
               question_retrieval.text = (
               "Sie werden zwei Bilder sehen. Bitte geben Sie an, wie viele Bilder in der gelernten Reihenfolge zwischen diesen beiden liegen. "
                "Bewegen Sie den Slider mit den Pfeiltasten. "
                "Loggen Sie ihre Antwort mit der Eingabetaste ein. "
                )
    KeyboardComponent continue_button_10
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = retrieval_quest_dur
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  Routine first_image
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    CodeComponent set_trigger_image_1
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock = core.Clock()
        trigOn = False
      Each Frame:
        ImgTrig = img_firstTrigNumber

        if image_1.status == NOT_STARTED and not trigOn and tThisFlip >= 0.0 - frameTolerance:
            win.callOnFlip(setParallelData, ImgTrig)
            win.callOnFlip(trigClock.reset)
            trigOn = True

        if trigOn and trigClock.getTime() >= 0.01:  # 10 ms pulse
            setParallelData(0)
            trigOn = False
    CodeComponent ctrl_pos_image_1
      Code Type = Auto->JS
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      Begin Routine:
        showThird = (trial_type==2)

        if showThird:
            image_1.setPos((0,0.16))
            fix_cross_10.setOpacity(1)

        else:
            image_1.setPos((0, 0))
            fix_cross_10.setOpacity(0)
    ImageComponent image_1
      image [set every repeat] = $img_first
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr
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    CodeComponent bids_first_retr
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting
        bids.schedule_onset(image_1, type_of_stimulus="image",
        component_label="image_1_retr",
        trial_type = "retr_" + str(trial_type),
        concept_label = img_first.partition("/")[-1],
        concept_exemplar = img_first.partition("/")[-1],
        block_name=blockLabel,
        sequence_name=sequence_name,
        trial_num=retrieval_trials.thisN)
      End Routine:
        bids.mark_offset(image_1)
    TextComponent fix_cross_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr
      text = +
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  Routine fix_cross_retr_1
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    TextComponent fix_cross_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fix_dur_retr
      text = +
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  Routine second_image
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    CodeComponent ctrl_third_5
      Code Type = Auto->JS
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      Begin Routine:
        image_3.setAutoDraw(False)
        showThird = (trial_type==2)

        if showThird:
            image_3.setImage(img_third);
            image_3.setPos((0.1, 0))
            image_3.setAutoDraw(True);
            fix_cross_5.setOpacity(1)

            image_2.setPos((-0.1,0))

        else:
            image_2.setPos((0, 0))
            fix_cross_5.setOpacity(0)
    CodeComponent set_trigger_image_2
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock = core.Clock()
        trigOn = False
      Each Frame:
        ImgTrig = img_secondTrigNumber

        if image_2.status == NOT_STARTED and not trigOn and tThisFlip >= 0.0 - frameTolerance:
            win.callOnFlip(setParallelData, ImgTrig)
            win.callOnFlip(trigClock.reset)
            trigOn = True

        if trigOn and trigClock.getTime() >= 0.01:  # 10 ms pulse
            setParallelData(0)
            trigOn = False
    CodeComponent set_trigger_image_3
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock = core.Clock()
        trigOn = False
      Each Frame:
        if img_thirdTrigNumber:
            ImgTrig = img_thirdTrigNumber
            if image_3.status == NOT_STARTED and not trigOn and tThisFlip >= 0.0 - frameTolerance:
                win.callOnFlip(setParallelData, ImgTrig)
                win.callOnFlip(trigClock.reset)
                trigOn = True

            if trigOn and trigClock.getTime() >= 0.01:  # 10 ms pulse
                setParallelData(0)
                trigOn = False
    ImageComponent image_2
      image [set every repeat] = $img_second
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr
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    ImageComponent image_3
      image [set every repeat] = $img_third
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr
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    CodeComponent bids_second_retr
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting
        bids.schedule_onset(image_2, type_of_stimulus="image",
        component_label="image_2_retr",
        trial_type = "retr_" + str(trial_type),
        concept_label = img_second.partition("/")[-1],
        concept_exemplar = img_second.partition("/")[-1],
        block_name=blockLabel,
        sequence_name=sequence_name,
        trial_num=retrieval_trials.thisN)

        bids.schedule_onset(image_3, type_of_stimulus="image",
        component_label="image_3_retr",
        trial_type = "retr_" + str(trial_type),
        concept_label = img_third.partition("/")[-1] if img_third else None,
        concept_exemplar = img_third.partition("/")[-1] if img_third else None,
        block_name=blockLabel,
        sequence_name=sequence_name,
        trial_num=retrieval_trials.thisN)
      End Routine:
        bids.mark_offset(image_2)
        bids.mark_offset(image_3)
    TextComponent fix_cross_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr
      text = +
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  Routine fix_cross_retr_2
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  Routine retr_response
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    CodeComponent set_trigger_opt_onset
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock = core.Clock()
        trigOn = False
      Each Frame:
        OptTrig = trigger_dict["response_retrieval_options"]
        if slider_main.status == NOT_STARTED and not trigOn and tThisFlip >= 0.0 - frameTolerance:
            win.callOnFlip(setParallelData, OptTrig)
            win.callOnFlip(trigClock.reset)
            trigOn = True

        if trigOn and trigClock.getTime() >= 0.01:  # 10 ms pulse
            setParallelData(0)
            trigOn = False
    CodeComponent set_comp_visibility
      Code Type = Auto->JS
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      Begin Routine:
        # Hide all by default
        slider_main.size = (0, 0)

        for stim in [fix_cross_11, image_1_rpt, opt_left_img, opt_right_img, yes_txt, no_txt]:
            stim.setOpacity(0)

        # Decide which UI to show
        if trial_type == 1:
            # Yes/No
            yes_txt.setOpacity(1)
            no_txt.setOpacity(1)
            resp.keys = []
            resp.rt = []
            resp.clock.reset()
            resp.keys = None
            resp.clearEvents()
            resp.allowKeys = ['left','right']  # or ['left', 'right'] if you use arrows

        elif trial_type == 2:
            # Two-image 2AFC
            image_1_rpt.setImage(img_first)
            opt_left_img.setImage(opt_left)
            opt_right_img.setImage(opt_right)
            opt_left_img.setOpacity(1)
            opt_right_img.setOpacity(1)
            image_1_rpt.setOpacity(1)
            fix_cross_11.setOpacity(1)

            resp.keys = []
            resp.rt = []
            resp.allowKeys = ['left','right']

        elif trial_type == 3:
            # 1–4 keypad (Text or an image of keypad)
            slider_main.size = (0.5, 0.06)

            resp.keys = []
            resp.rt = []
            resp.clock.reset()
            resp.keys = None
            resp.clearEvents()
            resp.allowKeys = ['left', 'right', 'return']
    ImageComponent image_1_rpt
      pos = (0, 0.16)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur
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    ImageComponent opt_left_img
      pos = (-0.1, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur
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    ImageComponent opt_right_img
      pos = (0.1, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur
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    TextComponent yes_txt
      letterHeight = 0.04
      pos = (-0.06, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur
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    TextComponent no_txt
      letterHeight = 0.04
      pos = (0.06, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur
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    TextComponent fix_cross_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur
      text = +
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    CodeComponent set_option_text_2
      Code Type = Auto->JS
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      Begin Routine:
        if trial_type == 1:
            if language == "english":
                yes_txt.text = ("yes")
                no_txt.text = ("no")
            if language == "german":
                yes_txt.text = ("ja")
                no_txt.text = ("nein")
            if language == "french":
                yes_txt.text = ("oui")
                no_txt.text = ("non")
    CodeComponent end_routine_after_resp
      Code Type = Auto->JS
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      Begin Routine:
        # initialize
        responded_retr = False
      Each Frame:
        if trial_type in [1, 2]:
            if resp.keys and not responded_retr:
                responded_retr = True
                print("trial type num", trial_type)
                continueRoutine = False
    KeyboardComponent resp
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = retr_dur
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    SliderComponent slider_main
      fillColor = -1.0000, -1.0000, -1.0000
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = "0","1","2","3","4"
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur_slider
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = [0,1,2,3,4]
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    CodeComponent controlslider_pos_2
      Code Type = Auto->JS
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      Each Frame:
        import random

        if slider_main.markerPos is None:
            possible_positions = [i for i in range(0, 4)]  # 0.0 … 4.0
            slider_main.markerPos = random.choice(possible_positions)

        #check keys (just the ones we want)
        keysPressed = resp.getKeys(keyList=["left", "right", "return"])
        for key in keysPressed:
            if key == 'left':
                slider_main.markerPos -= 1
            elif key == 'right':
                slider_main.markerPos += 1
            elif key == 'return':
                # confirm rating by setting to current markerPos
                slider_main.rating= slider_main.markerPos
                responded_retr = True
                continueRoutine = False
    CodeComponent bids_retr_response
      Code Type = Auto->JS
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      End Routine:
        if trial_type in [1,2]:
            # response neeeds to be saved at end of trial
            pressed = resp.keys
            if isinstance(pressed, list):
                pressed = pressed[-1] if pressed else "m"

            chosen_pos  = key2pos.get(pressed, None)
            is_correct = (pressed == correct_key)

            bids.add_instant(
            "choice",
            distance_correct = distance_correct,
            trial_type = "retr" + str(trial_type),
            block_name=block,
            sequence_name=learningSeq,
            trial_num=retrieval_trials.thisN,
            response=(resp.keys if resp.keys else "m"),
            response_time=(resp.rt if hasattr(resp, "rt") else None),
            correct=is_correct,
            expected_response = correct_key,
            response_meaning = chosen_pos
        )
        if trial_type==3:
            # response neeeds to be saved at end of trial
            pressed = resp.keys
            if isinstance(pressed, list):
                pressed = pressed[-1] if pressed else "m"

            if pressed == "return":
                chosen_item = slider_main.rating

                is_correct = (chosen_item == distance_correct) if chosen_item is not None else None

            bids.add_instant(
            "choice",
            distance_correct = distance_correct,
            trial_type = "retr" + str(trial_type),
            block_name=block,
            sequence_name=learningSeq,
            trial_num=retrieval_trials.thisN,
            response=chosen_item,
            response_time=(resp.rt if hasattr(resp, "rt") else None),
            correct=is_correct,
            expected_response = distance_correct,
            response_meaning = chosen_item
        )
    CodeComponent set_trigger_retr_response
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock = core.Clock()
        trigOn = False
      Begin Routine:
        retr_trig_sent = False
      Each Frame:
        RespTrig = trigger_dict["response_retrieval"]

        if not retr_trig_sent:
            # Builder key component usually stores the last key in resp.keys
            if trial_type in [1, 2]:
                if resp.keys:  # any allowed key was pressed
                    retr_trig_sent = True
                    setParallelData(RespTrig)
                    trigClock.reset()
                    trigOn = True

            elif trial_type == 3:
                if resp.keys == "return":
                    retr_trig_sent = True
                    setParallelData(RespTrig)
                    trigClock.reset()
                    trigOn = True

        if trigOn and trigClock.getTime() >= 0.01:  # 10 ms pulse
            setParallelData(0)
            trigOn = False
  Routine retr_task_break
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    CodeComponent determine_break_start_2
      Code Type = Auto->JS
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      Begin Routine:
        if block_B.thisN == break_after_route:
            continueRoutine = True
        else:
            continueRoutine = False
    CodeComponent bids_longbreak_logging_2
      Code Type = Auto->JS
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      Each Frame:
        # log onset at first frame

        bids.schedule_onset(break_instruction_2,
            trial_type = "break",
            type_of_stimulus="long_break_retrieval",
            block_name = block,
            component_label="instruction_task_break_ret")
      End Routine:
        # log offset at last frame of routine

        bids.mark_offset(break_instruction_2)
    CodeComponent trigger_long_break_start_2
      Code Type = Auto->JS
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      Each Frame:
        # break start
        break_start_trig = trigger_dict["task_break_begin"]
        if break_instruction_2.status == NOT_STARTED and tThisFlip >= 0.0-frameTolerance:
            send_onset_trigger(break_instruction_2, break_start_trig)
    TextComponent break_instruction_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = break_dur
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    CodeComponent trigger_long_break_end_2
      Code Type = Auto->JS
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      Each Frame:
        break_end_trig = trigger_dict["task_break_end"]


        if break_instruction_2.tStartRefresh:
            elapsed = tThisFlipGlobal - break_instruction_2.tStartRefresh
            remaining = max(0, break_dur - elapsed)

            if remaining == 0:
                # break end
                send_trigger(break_end_trig)
                core.wait(0.01)
    CodeComponent set_break_text_2
      Code Type = Auto->JS
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      Begin Experiment:
        if language == "german":
            break_instruction_2.text = (
                "Kurze Pause. Es geht gleich weiter."
            )

        if language == "english":
            break_instruction_2.text = (
                "Short break. The task will continue soon."
            )

        if language == "french":
            break_instruction_2.text = (
                "Courte pause. La tâche reprendra bientôt."
            )
  Routine set_learning_rows
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    CodeComponent define_number_trials
      Code Type = Auto->JS
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      Begin Experiment:
        N_LEARN = trials_per_run * n_learn_route # number of learning trials to use
        N_RETR = n_learn_route * 5 # number of retrieval trials to use

        learn_pool = list(range(N_LEARN))
        retr_pool  = list(range(N_RETR))
        learn_ptr = 0
        retr_ptr = 0

        def take_block(pool, ptr, n):
            if ptr + n > len(pool):
                raise RuntimeError(f"Not enough unique trials left to take {n} rows.")
            rows = pool[ptr:ptr+n]
            ptr += n
            return rows, ptr
    CodeComponent take_learn_routes_from_list
      Code Type = Auto->JS
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      Begin Routine:
        selected_rows, learn_ptr = take_block(learn_pool, learn_ptr, trials_per_run)
        print(selected_rows)
  Routine set_retrieval_rows
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    CodeComponent take_retr_routes_from_route
      Code Type = Auto->JS
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      Begin Routine:
        selected_rows, retr_ptr = take_block(retr_pool, retr_ptr, 5)
        print(selected_rows)
  Routine too_slow_Routine
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    CodeComponent determine_start
      Code Type = Auto->JS
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      Begin Routine:
        if responded:
            continueRoutine = False
    TextComponent tooSlowtext
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = too_slow_dur
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    CodeComponent set_slow_msg_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            tooSlowtext.text = (
                "Too slow. You need to respond faster."
            )

        if language == "german":
            tooSlowtext.text = (
                "Zu langsam. Sie müssen schneller antworten."
            )

        if language == "french":
            tooSlowtext.text = (
                "Trop lent. Vous devez répondre plus rapidement. "
            )
  Routine too_slow_Routine_2
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    CodeComponent determine_start_2
      Code Type = Auto->JS
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      Begin Routine:
        if responded_retr:
            continueRoutine = False
    TextComponent tooSlowtext_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = too_slow_dur
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    CodeComponent set_slow_msg_text_2
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            tooSlowtext.text_2 = (
                "Too slow. You need to respond faster."
            )

        if language == "german":
            tooSlowtext_2.text = (
                "Zu langsam. Sie müssen schneller antworten."
            )

        if language == "french":
            tooSlowtext_2.text = (
                "Trop lent. Vous devez répondre plus rapidement. "
            )
  Routine instructions_new_learn
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    CodeComponent control_routine
      Code Type = Auto->JS
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      Begin Routine:
        if block_B.thisN == (n_learn_route - 1):
            continueRoutine = False
    TextComponent instruction_text_newroute
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = instr_newroute_dur
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    CodeComponent set_instruction_newroute
      Code Type = Auto->JS
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      Begin Routine:
        if language == "french":
            instruction_text_newroute.text = ("Vous allez maintenant réapprendre les associations entre les images.")
        if language == "english":
            instruction_text_newroute.text = ("You will now learn associations between images again.")
        if language == "german":
            instruction_text_newroute.text = ("Sie werden nun erneut Assoziationen zwischen Bildern lernen.")
  Routine instruction_end
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    CodeComponent set_trigger_end
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock = core.Clock()
      Begin Routine:
        trigNumber = trigger_dict["start/end"]
      Each Frame:
        if instruction_part7.status == NOT_STARTED and not trigOn and tThisFlip >= 0.0 - frameTolerance:
            win.callOnFlip(setParallelData, trigNumber)
            win.callOnFlip(trigClock.reset)
            trigOn = True

        if trigOn and trigClock.getTime() >= 0.01:  # 10 ms pulse
            setParallelData(0)
            trigOn = False
    CodeComponent bids_instruc_7
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part7,
                                type_of_stimulus="instructions",
                                component_label="instruction_part7")
      End Routine:
        bids.mark_offset(instruction_part7)
    TextComponent instruction_part7
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part7_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part7.text = (
            "You finished the last task block. Good job!\n"
            "Press the return key to end this part of the experiment. "
            )

        if language == "german":
            instruction_part7.text = (
            "Sie haben den letzten Aufgabenblock abgeschlossen. Gut gemacht!\n"
            "Drücken Sie die Eingabetaste, um diesen Teil des Experiments zu beenden." )

        if language == "french":
            instruction_part7.text = (
            "Vous avez terminé la dernière partie des exercices. Bravo!\n"
            "Appuyez sur la touche Entrée pour terminer cette partie de l'expérience. "
        )
    KeyboardComponent continue_button_8
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine fast_seq_presentation
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    CodeComponent pport_trigger_fastseq
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock = core.Clock()
      Begin Routine:
        trig_sent = {
            'image_01': False,
            'image_02': False,
            'image_03': False,
            'image_04': False,
            'image_05': False,
        }

        image_components = {
            'image_01': {'comp': image_01, 'trig': fast_img_1_trig},
            'image_02': {'comp': image_02, 'trig': fast_img_2_trig},
            'image_03': {'comp': image_03, 'trig': fast_img_3_trig},
            'image_04': {'comp': image_04, 'trig': fast_img_4_trig},
            'image_05': {'comp': image_05, 'trig': fast_img_5_trig},
        }
      Each Frame:
        for img_name, img_dict in image_components.items():
            if not trig_sent[img_name]:
                image_comp = img_dict['comp']
                trig_value = img_dict['trig']
                if image_comp.status == NOT_STARTED and not trigOn and tThisFlip >= 0.0 - frameTolerance:
                    win.callOnFlip(setParallelData, trig_value)
                    win.callOnFlip(trigClock.reset)
                    trigOn = True

                    trig_sent[img_name] = True  # Mark as sent

        if trigOn and trigClock.getTime() >= 0.01:  # 10 ms pulse
            setParallelData(0)
            trigOn = False
    ImageComponent image_01
      image [set every repeat] = $fast_img_1
      size = (0.15, 0.15)
      startVal [time (s)] = mask_dur
      stopVal [duration (s)] = fast_img_dur
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    ImageComponent image_02
      image [set every repeat] = $fast_img_2
      size = (0.15, 0.15)
      startVal [time (s)] = fast_img_dur + mask_dur*2
      stopVal [duration (s)] = fast_img_dur
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    ImageComponent image_03
      image [set every repeat] = $fast_img_3
      size = (0.15, 0.15)
      startVal [time (s)] = fast_img_dur * 2 + mask_dur*3
      stopVal [duration (s)] = fast_img_dur
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    ImageComponent image_04
      image [set every repeat] = $fast_img_4
      size = (0.15, 0.15)
      startVal [time (s)] = fast_img_dur *3 + mask_dur*4
      stopVal [duration (s)] = fast_img_dur
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    ImageComponent image_05
      image [set every repeat] = $fast_img_5
      size = (0.15, 0.15)
      startVal [time (s)] = fast_img_dur * 4 + mask_dur*5
      stopVal [duration (s)] = fast_img_dur
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    ImageComponent mask_1
      image [set every repeat] = $mask_1_img
      size = (0.15, 0.15)
      startVal [time (s)] = fast_img_dur + mask_dur
      stopVal [duration (s)] = mask_dur
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    ImageComponent mask_2
      image [set every repeat] = $mask_2_img
      size = (0.15, 0.15)
      startVal [time (s)] = fast_img_dur *2 + mask_dur*2
      stopVal [duration (s)] = mask_dur
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    ImageComponent mask_3
      image [set every repeat] = $mask_3_img
      size = (0.15, 0.15)
      startVal [time (s)] = fast_img_dur *3 + mask_dur*3
      stopVal [duration (s)] = mask_dur
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    ImageComponent mask_4
      image [set every repeat] = $mask_4_img
      size = (0.15, 0.15)
      startVal [time (s)] = fast_img_dur *4 + mask_dur*4
      stopVal [duration (s)] = mask_dur
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    ImageComponent mask_0
      image [set every repeat] = $mask_0_img
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = mask_dur
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    ImageComponent mask_5
      image [set every repeat] = $mask_5_img
      size = (0.15, 0.15)
      startVal [time (s)] = fast_img_dur * 5 + mask_dur*5
      stopVal [duration (s)] = mask_dur
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  Routine instruction_fast_begin
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    TextComponent fast_seq_instruction
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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    CodeComponent text_fast_seq_instruction
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            fast_seq_instruction.text = (
            "You will now see image sequences in quick succession. "
            "Please focus on the screen. "
            "After each image sequence, you will have to answer a question about the sequence.\n"
            "[Press the return key once your are ready.]"
            )
        if language == "french":
            fast_seq_instruction.text = (
            "Vous allez maintenant voir des séquences d’images présentées en succession rapide. "
            "Veuillez rester concentré(e) sur l’écran. "
            "Après chaque séquence d’images, vous devrez répondre à une question concernant la séquence.\n"
            "[Appuyez sur la touche Entrée lorsque vous êtes prêt.]"
            )

        if language == "german":
            fast_seq_instruction.text = (
            "Sie werden nun Bildsequenzen sehen, die in schneller Abfolge präsentiert werden. "
            "Bitte richten Sie Ihre Aufmerksamkeit auf den Bildschirm. "
            "Nach jeder Bildsequenz werden Sie eine Frage zur Sequenz beantworten.\n"
            "[Drücken Sie die Eingabetaste, sobald Sie bereit sind.]"
            )
    KeyboardComponent continue_button_11
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.5
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  Routine fast_seq_fix
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    TextComponent fix_cross_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine question_fastseq
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    TextComponent question_fastseq_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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    CodeComponent set_question_fastseq_text
      Code Type = Auto->JS
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      Begin Routine:
        if language=="english":
            question_fastseq_text.text = (
            "Which position did this image appear in? "
            "Press 1-5 on the keyboard")
        if language=="german":
            question_fastseq_text.text = ("An welcher Position ist dieses Bild erschienen? "
        "Drücken Sie die Tasten 1 bis 5 auf der Tastatur.")
        if language=="french":
           question_fastseq_text.text = ("À quelle position cette image est-elle apparue ? "
        "Appuyez sur les touches 1 à 5 du clavier. ")
    KeyboardComponent key_resp_2
      allowedKeys = "1", "2", "3", "4", "5"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_quest_fastseq
      image [set every repeat] = $prompt_image
      pos = (0, 0.15)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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Flow
  Routine startup_settings
  Routine instructions_01
  Routine instructions_02
  LoopInitiator block_B loopType="TrialHandler"
    conditions = [{'condFilelearning': 'sequences/learning_blockB_fixed-middle-10_17.xlsx', 'condFileretr': 'sequences/retrieval_blockB_fixed-middle-10_17.xlsx'}]
    conditionsFile = sequences/TSRlearn_blockB.xlsx
    isTrials = False
    loopType = sequential
    nReps = n_learn_route
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    Routine set_learning_rows
    LoopInitiator learning_trials loopType="TrialHandler"
      Selected rows = $selected_rows
      conditionsFile = $condFilelearning
      loopType = sequential
      nReps = 1
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      conditions:
        [{'block': 'A', 'learningSeq': 'A', 'runIndexWithinSeq': 1, 'currPosInSeq': 1, 'promptFile': 'stimuli/tree/tree_16.jpg', 'correctFile': 'stimuli/box/box_06.jpg', 'dist_01File': 'stimuli/bird/bird_40.jpg', 'dist_02File': 'stimuli/dog/dog_11.jpg', 'promptConcept': 'tree', 'correctConcept': 'box', 'dist01Concept': 'bird', 'dist02Concept': 'dog', 'correct_pos': 'right', 'dist01_pos': 'center', 'dist02_pos': 'left', 'correct_ans': 'right', 'pairTargetPosInSeq': 2},
        {'block': 'A', 'learningSeq': 'A', 'runIndexWithinSeq': 1, 'currPosInSeq': 2, 'promptFile': 'stimuli/box/box_06.jpg', 'correctFile': 'stimuli/berry/berry_05.jpg', 'dist_01File': 'stimuli/fork/fork_27.jpg', 'dist_02File': 'stimuli/laptop/laptop_20.jpg', 'promptConcept': 'box', 'correctConcept': 'berry', 'dist01Concept': 'fork', 'dist02Concept': 'laptop', 'correct_pos': 'left', 'dist01_pos': 'right', 'dist02_pos': 'center', 'correct_ans': 'left', 'pairTargetPosInSeq': 3},
        {'block': 'A', 'learningSeq': 'A', 'runIndexWithinSeq': 1, 'currPosInSeq': 3, 'promptFile': 'stimuli/berry/berry_05.jpg', 'correctFile': 'stimuli/key/key_09.jpg', 'dist_01File': 'stimuli/bicycle/bicycle_33.jpg', 'dist_02File': 'stimuli/bug/bug_35.jpg', 'promptConcept': 'berry', 'correctConcept': 'key', 'dist01Concept': 'bicycle', 'dist02Concept': 'bug', 'correct_pos': 'left', 'dist01_pos': 'center', 'dist02_pos': 'right', 'correct_ans': 'left', 'pairTargetPosInSeq': 4},
        {'block': 'A', 'learningSeq': 'A', 'runIndexWithinSeq': 1, 'currPosInSeq': 4, 'promptFile': 'stimuli/key/key_09.jpg', 'correctFile': 'stimuli/dog/dog_36.jpg', 'dist_01File': 'stimuli/coffee/coffee_05.jpg', 'dist_02File': 'stimuli/phone/phone_24.jpg', 'promptConcept': 'key', 'correctConcept': 'dog', 'dist01Concept': 'coffee', 'dist02Concept': 'phone', 'correct_pos': 'center', 'dist01_pos': 'right', 'dist02_pos': 'left', 'correct_ans': 'center', 'pairTargetPosInSeq': 5}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
      Routine choice_display
      Routine feedback
      Routine too_slow_Routine
      Routine rest_period
    LoopTerminator learning_trials
    Routine set_retrieval_rows
    LoopInitiator retrieval_trials loopType="TrialHandler"
      Selected rows = $selected_rows
      conditionsFile = $condFileretr
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'trial_type': 3, 'img_first': 'stimuli/fork/fork_39.jpg', 'img_second': 'stimuli/bird/bird_29.jpg', 'img_third': None, 'opt_left': None, 'opt_right': None, 'correct_side': None, 'correct_key': 'right', 'distance_correct': 3, 'image_dur_retr': 2, 'fix_dur_retr': 0.5, 'sequence_name': 'A', 'blockLabel': 'A', 'is_yes': None, 'distance_left': None, 'distance_right': None},
        {'trial_type': 3, 'img_first': 'stimuli/key/key_09.jpg', 'img_second': 'stimuli/laptop/laptop_13.jpg', 'img_third': None, 'opt_left': None, 'opt_right': None, 'correct_side': None, 'correct_key': 'down', 'distance_correct': 4, 'image_dur_retr': 2, 'fix_dur_retr': 0.5, 'sequence_name': 'A', 'blockLabel': 'A', 'is_yes': None, 'distance_left': None, 'distance_right': None},
        {'trial_type': 3, 'img_first': 'stimuli/dog/dog_36.jpg', 'img_second': 'stimuli/phone/phone_26.jpg', 'img_third': None, 'opt_left': None, 'opt_right': None, 'correct_side': None, 'correct_key': 'down', 'distance_correct': 4, 'image_dur_retr': 2, 'fix_dur_retr': 0.5, 'sequence_name': 'A', 'blockLabel': 'A', 'is_yes': None, 'distance_left': None, 'distance_right': None},
        {'trial_type': 3, 'img_first': 'stimuli/fork/fork_39.jpg', 'img_second': 'stimuli/pizza/pizza_29.jpg', 'img_third': None, 'opt_left': None, 'opt_right': None, 'correct_side': None, 'correct_key': 'down', 'distance_correct': 4, 'image_dur_retr': 2, 'fix_dur_retr': 0.5, 'sequence_name': 'A', 'blockLabel': 'A', 'is_yes': None, 'distance_left': None, 'distance_right': None}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
      Routine prompt_question
      Routine first_image
      Routine fix_cross_retr_1
      Routine second_image
      Routine fix_cross_retr_2
      Routine retr_response
      Routine too_slow_Routine_2
      Routine retr_task_break
    LoopTerminator retrieval_trials
    Routine instructions_new_learn
  LoopTerminator block_B
  Routine instruction_fast_begin
  LoopInitiator repeats_fastseq loopType="TrialHandler"
    conditionsFile = sequences/fastseq_conditions_17.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'repetition': 1, 'sequence': 'A', 'probe_position': 4, 'fast_img_1': 'stimuli/hand/hand_19.jpg', 'fast_img_1_trig': 8, 'fast_img_2': 'stimuli/phone/phone_13.jpg', 'fast_img_2_trig': 28, 'fast_img_3': 'stimuli/ball/ball_15.jpg', 'fast_img_3_trig': 1, 'fast_img_4': 'stimuli/flower/flower_40.jpg', 'fast_img_4_trig': 6, 'fast_img_5': 'stimuli/bread/bread_20.jpg', 'fast_img_5_trig': 3, 'mask_0_img': 'stimuli/mask_images/mask_17.png', 'mask_1_img': 'stimuli/mask_images/mask_12.png', 'mask_2_img': 'stimuli/mask_images/mask_13.png', 'mask_3_img': 'stimuli/mask_images/mask_23.png', 'mask_4_img': 'sti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,
      {'repetition': 1, 'sequence': 'B', 'probe_position': 5, 'fast_img_1': 'stimuli/hand/hand_20.jpg', 'fast_img_1_trig': 8, 'fast_img_2': 'stimuli/chair/chair_07.jpg', 'fast_img_2_trig': 4, 'fast_img_3': 'stimuli/flower/flower_26.jpg', 'fast_img_3_trig': 6, 'fast_img_4': 'stimuli/bread/bread_15.jpg', 'fast_img_4_trig': 3, 'fast_img_5': 'stimuli/dog/dog_26.jpg', 'fast_img_5_trig': 5, 'mask_0_img': 'stimuli/mask_images/mask_21.png', 'mask_1_img': 'stimuli/mask_images/mask_25.png', 'mask_2_img': 'stimuli/mask_images/mask_00.png', 'mask_3_img': 'stimuli/mask_images/mask_03.png', 'mask_4_img': 'stimuli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,
      {'repetition': 2, 'sequence': 'A', 'probe_position': 3, 'fast_img_1': 'stimuli/hammer/hammer_33.jpg', 'fast_img_1_trig': 7, 'fast_img_2': 'stimuli/hand/hand_19.jpg', 'fast_img_2_trig': 8, 'fast_img_3': 'stimuli/phone/phone_13.jpg', 'fast_img_3_trig': 28, 'fast_img_4': 'stimuli/jacket/jacket_20.jpg', 'fast_img_4_trig': 10, 'fast_img_5': 'stimuli/fish/fish_23.jpg', 'fast_img_5_trig': 20, 'mask_0_img': 'stimuli/mask_images/mask_23.png', 'mask_1_img': 'stimuli/mask_images/mask_13.png', 'mask_2_img': 'stimuli/mask_images/mask_25.png', 'mask_3_img': 'stimuli/mask_images/mask_16.png', 'mask_4_img': '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,
      {'repetition': 2, 'sequence': 'B', 'probe_position': 2, 'fast_img_1': 'stimuli/hand/hand_20.jpg', 'fast_img_1_trig': 8, 'fast_img_2': 'stimuli/fish/fish_35.jpg', 'fast_img_2_trig': 20, 'fast_img_3': 'stimuli/lamp/lamp_30.jpg', 'fast_img_3_trig': 26, 'fast_img_4': 'stimuli/house/house_10.jpg', 'fast_img_4_trig': 9, 'fast_img_5': 'stimuli/bread/bread_15.jpg', 'fast_img_5_trig': 3, 'mask_0_img': 'stimuli/mask_images/mask_05.png', 'mask_1_img': 'stimuli/mask_images/mask_02.png', 'mask_2_img': 'stimuli/mask_images/mask_22.png', 'mask_3_img': 'stimuli/mask_images/mask_01.png', 'mask_4_img': 'stimuli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
    Routine fast_seq_fix
    Routine fast_seq_presentation
    Routine question_fastseq
  LoopTerminator repeats_fastseq
  Routine instruction_end
