PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1536, 864]
  expName = TSRlearn_practice
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine startup_settings
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    CodeComponent import_packages
      Code Type = Py
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      Begin Experiment:
        from pathlib import Path
        import csv
        import numpy as np
        import atexit
    CodeComponent function_definitions
      Code Type = Py
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      Begin Experiment:
        # log function that saves when import task events happen to log file
        def log(*msgs, sep=' ', end='\n'):
            log_file = u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'] + '_print.log')
            print(*msgs, sep=sep, end=end, flush=True)

            # Append to log file
            with open(log_file, 'a') as f:
                f.write(sep.join(str(msg) for msg in msgs) + end)

        # function for setting triggers when comps appear
        def send_onset_trigger(stim, trig_number):
            #record exact onset on the global clock
            win.timeOnFlip(stim, 'tStartRefresh')
            send_trigger(trig_number)


        from ast import literal_eval
        # function that matches position keywords to position (x,y - coord) tuples
        def resolve_pos(val):
            """Return a (x,y) tuple from various spreadsheet formats."""
            #Already a tuple/list/ndarray -> normalize to tuple
            if isinstance(val, (list, tuple, np.ndarray)):
                return tuple(val)
            # Name like "left_pos" -> look up
            if isinstance(val, str):
                name = val.strip()
                if name in POS:
                    return POS[name]
                # Or literal like "(-0.4, 0.2)" in the cell
                try:
                    parsed = literal_eval(name)
                    if isinstance(parsed, (list, tuple)) and len(parsed) == 2:
                        return tuple(parsed)
                except Exception:
                    pass
                    raise ValueError(f"Unrecognized position value: {val!r}")
                    raise TypeError(f"Unsupported position type: {type(val)}")
    CodeComponent exp_settings
      Code Type = Auto->JS
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      Begin Experiment:
        ## set main experimental variables

        # instruction language
        language = "french" # "french" or "english"

        # keys
        left_key = "left"
        center_key = "up"
        right_key = "right"
        down_key = "down"

        # pos of images (x-coord, y-coord)
        left_pos   = (-0.2, 0.1)
        right_pos  = (0.2, 0.1)
        center_pos = (0.0, 0.1)
        prompt_pos = (0, -0.1)

        # Map positions to keys
        pos_to_key = {
            right_pos: right_key,
            center_pos: center_key,
            left_pos: left_key
        }
        # pos of instructions
        instruc_pos = (0,0)

        # make coordinates match with position description in excel file
        POS = {
            'left':   left_pos,
            'center': center_pos,
            'right':  right_pos
        }

         # timings
        max_response_time = 3 # [s]

         # feedback
        feedback_steps  =  0.06   # steps out of 1 (percent)
        rest_jump       =  0.004 # abs distance to target pos
        animation_time   = 1.4    # [s]

        # too lso wmessage
        too_slow_dur = 0.5

        # breaks (indicate after which learning route you want to break)
        break_dur = 30
        break_after_route = 10

        # replay breaks during learning
        replay_break_dur = 5
        break_interval = 13 # after 13 trials because we have 14 image sequences

        # required streak
        req_streak = 2

        # break when "req_streak" correct routes in a row
        streak_breaks_exp = False

        # duration of response time on retrieval tirals
        retr_dur = 5
        # how long is retr question presented
        retrieval_quest_dur = 3
        retr_dur_slider = 5
        image_dur_retr = 1.5
        fix_dur_retr = 0.5
    CodeComponent bids_logging_functions
      Code Type = Py
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      Begin Experiment:
        # BIDS event logger (no Builder BIDS components needed bc they don't work that well)

        class BIDSLogger:
            def __init__(self, win, clock, default_cols=None):
                self.win = win
                self.clock = clock
                self.rows = []          # list of dicts -> will become events.tsv
                self.active = {}        # stim -> row index (for duration)
                self.defaults = default_cols or {}

                # fixed column order (for the .tsv file)
                self.col_order = [
                    "subject", "trial_type", "block_name", "sequence_name",
                    "route_num",
                    "trial_num",
                    "component_label",
                    "concept_label", "concept_exemplar",
                    "onset", "duration",
                    "type_of_stimulus",
                    "response_time", "response",
                    "response_meaning", "expected_response",
                    "correct"
                ]

            # schedule logging of onset on the *next* flip (exactly when the stim appears)
            def schedule_onset(self, stim, **extra_cols):
                 # Onset: first frame it is STARTED
                if getattr(stim, "status", None) == STARTED and stim not in self.active:
                    # Builder already records exact onset on flip into tStartRefresh;
                    # fall back to current clock if that isn't available.
                    t_on = getattr(stim, "tStartRefresh", None)
                    if t_on is None:
                        t_on = self.clock.getTime()
                    row = {
                        "onset": float(t_on),
                        "duration": np.nan,
                    }
                    row.update(self.defaults)
                    row.update(extra_cols)
                    self.rows.append(row)
                    self.active[stim] = len(self.rows) - 1

            # to log the offset and therefore compute durations of components
            def mark_offset(self, stim):
                if getattr(stim, "status", None) == FINISHED and stim in self.active:
                    idx = self.active.pop(stim)
                    t_off = getattr(stim, "tStopRefresh", None)
                    if t_off is None:
                        t_off = self.clock.getTime()
                    self.rows[idx]["duration"] = float(t_off - self.rows[idx]["onset"])

            # log a one-shot event right now (no duration), e.g., button press
            def add_instant(self, trial_type, **extra_cols):
                row = {"onset": float(self.clock.getTime()), "duration": 0.0,
                       "type_of_stimulus": trial_type}
                row.update(self.defaults)
                row.update(extra_cols)
                self.rows.append(row)

            # write out a BIDS-like events.tsv
            def save(self, filename_base):
                out = Path(filename_base).with_suffix("")  # strip .csv/.log if present
                out = out.parent / (out.name + "_events.tsv")

                # union of all keys, but keep preferred order first
                all_keys = list(self.col_order)
                for r in self.rows:
                    for k in r.keys():
                        if k not in all_keys:
                            all_keys.append(k)

                with open(out, "w", newline="", encoding="utf-8") as f:
                    w = csv.DictWriter(f, fieldnames=all_keys, delimiter="\t", extrasaction="ignore")
                    w.writeheader()
                    for r in self.rows:
                        # convert Nones to "n/a" for BIDS friendliness
                        out_row = {k: ("n/a" if (r.get(k) is None or (isinstance(r.get(k), float) and np.isnan(r.get(k)))) else r.get(k))
                                   for k in all_keys}
                        w.writerow(out_row)

                return str(out)
        # set global clock as default because we need it for timing
        bids = None

        # atexit autosave: runs on normal finish AND on ESC (core.quit)
        def _bids_autosave():
            try:
                if bids and hasattr(bids, "rows"):
                    out = bids.save(thisExp.dataFileName)
                    print(f"[autosave] BIDS events written to: {out}")
            except Exception as e:
                print(f"[autosave] Failed to save BIDS events: {e}")
      Begin Routine:
        # Create the logger once
        bids = BIDSLogger(
            win=win,
            clock=globalClock,
            default_cols=dict(
                subject=expInfo.get("participant")
            )
        )

        # write a header-only file immediately so each start creates a file
        _ = bids.save(thisExp.dataFileName)

        # atexit autosave: runs on normal finish AND on ESC (core.quit)
        atexit.register(_bids_autosave)
  Routine instructions_01
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    CodeComponent bids_instruc
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part1,
                                trial_type="instruction",
                                type_of_stimulus="instruction_text",
                                component_label="instruction_part1")
      End Routine:
        bids.mark_offset(instruction_part1)
    TextComponent instruction_part1
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part1_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part1.text = (
        "Welcome to the second part of the experiment.\n\n "
        "In this part, the task consists of alternating learning phases "
        "and question phases. During the learning phases, you will learn associations between images.\n\n"
        "[Press the return key to continue.]"
        )


        if language == "german":
            instruction_part1.text = (
        "Willkommen zum zweiten Teil des Experiments.\n\n"
        "In diesem Teil besteht die Aufgabe aus abwechselnden Lernphasen "
        "und Fragephasen. Während der Lernphasen lernen Sie Assoziationen zwischen Bildern.\n\n"
        "[Drücken Sie die Eingabetaste, um fortzufahren.]"
        )

        if language == "french":
           instruction_part1.text = (
        "Bienvenue dans la deuxième partie de l'expérience.\n\n"
        "Dans cette partie, la tâche consiste à alterner des phases d'apprentissage "
        "et des phases de questions. Pendant les phases d'apprentissage, vous apprendrez des associations entre des images.\n\n"
        "[Appuyez sur la touche Entrée pour continuer.]")
    KeyboardComponent continue_button
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_02
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    CodeComponent bids_instruc_2
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part2,
                                type_of_stimulus="instructions",
                                component_label="instruction_part2")
      End Routine:
        bids.mark_offset(instruction_part2)
    TextComponent instruction_part2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instructions_part2_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part2.text = (
        "During the question phases, you will be asked questions about the image "
        "associations you just learned. \n\n"
        "After each question phase, you will return to a learning phase, "
        "followed again by questions.\n\n"
        "[Press the return key to continue.]"
        )


        if language == "german":
            instruction_part2.text = (
        "Während der Fragephasen werden Ihnen Fragen zu den Bildassoziationen gestellt, "
        "die Sie gerade gelernt haben.\n\n"
        "Nach jeder Fragephase kehren Sie zu einer Lernphase zurück, "
        "auf die erneut Fragen folgen.\n\n"
        "[Drücken Sie die Eingabetaste, um fortzufahren.]"
        )

        if language == "french":
           instruction_part2.text = (
            "Pendant les phases de questions, on vous posera des questions "
        "sur les associations d'images que vous venez d'apprendre.\n\n"
        "Après chaque phase de questions, vous reviendrez à une phase d'apprentissage, "
        "suivie à nouveau de questions.\n\n"
        "[Appuyez sur la touche Entrée pour continuer.]"
        )
    KeyboardComponent continue_button_2
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_03
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    CodeComponent bids_instruc_3
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part3,
                                type_of_stimulus="instructions",
                                component_label="instruction_part3")
      End Routine:
        bids.mark_offset(instruction_part3)
    TextComponent instruction_part3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instructions_part3_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part3.text = (
        "In the learning phases, you will learn sequences of "
        "images.\n\n"
        "You will always start with the first image in a sequence.\n\n"
        "Your task is to choose the correct next image in the sequence. "
        "At the beginning, you will not yet know the correct pairings.\n\n"
        "[Press the return key to continue.]"
        )


        if language == "german":
            instruction_part3.text = (
        "In den Lernphasen lernen Sie Bildsequenzen kennen.\n\n"
        "Sie beginnen immer mit dem ersten Bild einer Sequenz.\n\n"
        "Ihre Aufgabe ist es, das richtige nächste Bild in der Sequenz auszuwählen.\n"
        "Zu Beginn kennen Sie die richtigen Paare noch nicht.\n\n"
        "[Drücken Sie die Eingabetaste, um fortzufahren.]"
        )

        if language == "french":
            instruction_part3.text = (
        "Au cours des phases d'apprentissage, vous apprendrez des séquences d'images.\n\n"
        "Vous commencerez toujours par la première image d'une séquence.\n\n"
        "Votre tâche consiste à choisir l'image suivante correcte dans la séquence. "
        "Au début, vous ne connaîtrez pas encore les associations correctes.\n\n"
        "[Appuyez sur la touche Entrée pour continuer.]")
    KeyboardComponent continue_button_3
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_04
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    CodeComponent bids_instruc_4
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part4,
                                type_of_stimulus="instructions",
                                component_label="instruction_part4")
      End Routine:
        bids.mark_offset(instruction_part4)
    TextComponent instruction_part4
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part4_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part4.text = (
        "You will learn the correct associations step by step through trial and feedback.\n"
        "After each choice, the correct image will replace the current one, and you will then select the next image in the sequence.\n\n"
        "To help you remember the image associations and their order, please imagine a short story that links the images together.\n\n"
        "[Press the return key to continue.]")



        if language == "german":
            instruction_part4.text = (
        "Sie lernen die richtigen Assoziationen Schritt für Schritt durch Ausprobieren und Feedback.\n"
        "Nach jeder Auswahl ersetzt das richtige Bild das aktuelle Bild, und Sie wählen dann das nächste Bild in der Reihenfolge aus.\n\n"
        "Um sich die Bildassoziationen und ihre Reihenfolge besser merken zu können, stellen Sie sich bitte eine kurze Geschichte vor, die die Bilder miteinander verbindet.\n\n"
        "[Drücken Sie die Eingabetaste, um fortzufahren.]"
        )

        if language == "french":
            instruction_part4.text = (
        "Vous apprendrez les associations correctes étape par étape grâce à des essais et des commentaires.\n"
        "Après chaque choix, l'image correcte remplacera l'image actuelle, et vous sélectionnerez ensuite l'image suivante dans la séquence.\n\n"
        "Pour vous aider à mémoriser les associations d'images et leur ordre, imaginez une petite histoire qui relie les images entre elles.\n\n"
        "[Appuyez sur la touche Entrée pour continuer.]"
        )
    KeyboardComponent continue_button_4
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_05
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    CodeComponent bids_instruc_5
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part5,
                                type_of_stimulus="instructions",
                                component_label="instruction_part5")
      End Routine:
        bids.mark_offset(instruction_part5)
    TextComponent instruction_part5
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part5_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part5.text = (
            "First, you will practice the learning trials.\n"
            "The current image will be shown at the bottom of the screen, and three possible options will appear at the top.\n\n"
            "Choose the image you think comes next by pressing the left, center, or right arrow key.\n\n"
            "[Press the return key to start the practice trials.]"
            )

        if language == "french":
            instruction_part5.text = (
        "Tout d'abord, vous allez vous entraîner à l'aide d'essais d'apprentissage.\n"
        "L'image actuelle s'affichera en bas de l'écran et trois options possibles apparaîtront en haut.\n\n"
        "Choisissez l'image qui, selon vous, vient ensuite en appuyant sur la touche fléchée gauche, centrale ou droite.\n\n"
        "[Appuyez sur la touche Entrée pour commencer les essais d'entraînement.]"
        )

        if language == "german":
            instruction_part5.text = (
        "Zuerst üben Sie die Lerndurchgänge.\n"
        "Das aktuelle Bild wird unten auf dem Bildschirm angezeigt, und oben erscheinen drei mögliche Optionen.\n\n"
        "Wählen Sie das Bild, von dem Sie glauben, dass es als nächstes kommt, indem Sie die Pfeiltaste nach links, in die Mitte oder nach rechts drücken.\n\n"
        "[Drücken Sie die Eingabetaste, um die Übungsdurchgänge zu starten.]"
        )
    KeyboardComponent continue_button_5
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine practice_learn_choice
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    PolygonComponent polygon_4
      fillColor [set every frame] = 0.0000, 0.0000, 0.0000
      lineColor [set every frame] = 0.0039, 0.0039, 0.0039
      opacity [set every frame] = 0
      shape = rectangle
      size = (0.16, 0.16)
      startVal [time (s)] = 0.0
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    ImageComponent prompt_prc
      image [set every repeat] = $promptFile
      pos [set every repeat] = prompt_pos
      size = (0.15,0.15)
      startVal [time (s)] = 0.0
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    ImageComponent dist_01_prc
      image [set every repeat] = $dist_01File
      pos [set every repeat] = resolve_pos(dist01_pos)
      size = (0.15,0.15)
      startVal [time (s)] = 0.0
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    ImageComponent dist_02_prc
      image [set every repeat] = $dist_02File
      pos [set every repeat] = resolve_pos(dist02_pos)
      size = (0.15,0.15)
      startVal [time (s)] = 0.0
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    ImageComponent correct_prc
      image [set every repeat] = $correctFile
      pos [set every repeat] = resolve_pos(correct_pos)
      size = (0.15,0.15)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_prc
      allowedKeys = left_key, center_key, right_key
      correctAns = $correct_ans
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_response_time
      store = first key
      syncScreenRefresh = False
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    TextComponent instructions_choose_prc
      letterHeight = 0.03
      pos = instruc_pos
      startVal [time (s)] = 0.0
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    CodeComponent instructions_choose_txt_prc
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instructions_choose_prc.text = (
            "Choose the next image in the sequence!")

        if language == "german":
            instructions_choose_prc.text = (
            "Wählen Sie das nächste Bild in der Sequenz!")

        if language == "french":
            instructions_choose_prc.text = (
            "Choisissez l'image suivante dans la séquence !")
    CodeComponent code_prc
      Code Type = Auto->JS
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      Begin Routine:
        # determine which one is correct response on this trial
        # might need later
        correctAnsKey = pos_to_key[resolve_pos(correct_pos)]

        # start a clock to time out routine if necessary
        routClock = core.Clock()
        routClock.reset()

        # initialize
        responded = False
        key_resp_prc.keys = []
        key_resp_prc.rt = None

        # this attribute needs to also exist otherwise there is error
        key_resp_prc.duration = None
      Each Frame:
        # timeout case
        if routClock.getTime() >= max_response_time:
            # no key was pressed in time
            key_resp_prc.keys = None
            key_resp_prc.rt = None
            responded = False
            continueRoutine = False
            key_resp_prc.corr = None
            # (optionally store that it was a timeout)

        # if there is key selection
        if key_resp_prc.keys:
            if key_resp_prc.keys == left_key:
                chosenPos = left_pos
            elif key_resp_prc.keys == center_key:
                chosenPos = center_pos
            elif key_resp_prc.keys == right_key:
                chosenPos = right_pos

            polygon_4.setPos(chosenPos)
            polygon_4.setOpacity(1.0)

            if key_resp_prc.keys == correctAnsKey:
                key_resp_prc.corr = 1
                polygonCol = "green"
            else:
                key_resp_prc.corr = 0
                polygonCol = "red"

            polygon_4.setFillColor(polygonCol)
            polygon_4.setLineColor(polygonCol)
            polygon_4.draw()
            win.flip()
            responded = True
            core.wait(0.3)
            continueRoutine = False
  Routine practice_learn_feedback
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    CodeComponent animation_control_prc
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize animation control
        endY = prompt_pos[1]    # end y-coor of moving image
        endX = prompt_pos[0]    # end x-coord of moving image

        maxAnimationDur = int(round(animation_time * expInfo['frameRate']))
        animationTimer = 0      # initialize variable
        animationDone = False   # initialize variable
        moveCorrect = False     # initialize variable
      Each Frame:
        # Start animation
        if not moveCorrect and not animationDone:
            moveCorrect = True

        # Run animation
        if moveCorrect and not animationDone:
            animationTimer += 1

            # Current position
            current_x, current_y = correct_prc_2.pos

            # Compute direction toward target
            dx = endX - current_x
            dy = endY - current_y

            # Move a small fraction toward target
            move_fraction = feedback_steps # % of the remaining distance each frame
            new_x = current_x + dx * move_fraction
            new_y = current_y + dy * move_fraction

            # Update position
            correct_prc_2.setPos((new_x, new_y))

            # Stop when close enough to target
            if (abs(dx) < rest_jump and abs(dy) < rest_jump) or animationTimer > maxAnimationDur:
            # if (abs(dx) < rest_jump and abs(dy) < rest_jump):
                correct_prc_2.setPos((endX, endY))
                animationDone = True
                moveCorrect = False
                continueRoutine = False
    ImageComponent prompt_prc_2
      image [set every repeat] = $promptFile
      pos [set every repeat] = prompt_pos
      size = (0.15,0.15)
      startVal [time (s)] = 0.0
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    ImageComponent dist_01_prc_2
      image [set every repeat] = $dist_01File
      pos [set every repeat] = resolve_pos(dist01_pos)
      size = (0.15,0.15)
      startVal [time (s)] = 0.0
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    ImageComponent dist_02_prc_2
      image [set every repeat] = $dist_02File
      pos [set every repeat] = resolve_pos(dist02_pos)
      size = (0.15,0.15)
      startVal [time (s)] = 0.0
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    ImageComponent correct_prc_2
      image [set every repeat] = $correctFile
      pos [set every repeat] = resolve_pos(correct_pos)
      size = (0.15,0.15)
      startVal [time (s)] = 0.0
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  Routine instruction_06
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    CodeComponent bids_instruc_6
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part6,
                                type_of_stimulus="instructions",
                                component_label="instruction_part6")
      End Routine:
        bids.mark_offset(instruction_part6)
    TextComponent instruction_part6
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part6_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part6.text = (
            "Now you will practice the retrieval questions.\n\n"
            "[Press the return key to continue.]"
            )



        if language == "german":
            instruction_part6.text = (
        "Sie werden nun den Gedächtnisabruf üben.\n\n[Drücke Sie die Eingabetaste, um weiterzumachen.]"
        )

        if language == "french":
                instruction_part6.text = (
        "Vous allez maintenant vous exercer à la récupération de mémoire.\n\n"
        "[Appuyez sur la touche Entrée pour continuer.]"
        )
    KeyboardComponent continue_button_6
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine practice_retrieval_first_image
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    ImageComponent image_1_prc
      image [set every repeat] = $img_first
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr
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    ImageComponent background_info_2
      image [set every repeat] = $back_info_img
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr
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  Routine practice_retrieval_fix_cross_01
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    ImageComponent mask_img1_2
      image = stimuli/mask_images/mask_00.png
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    ImageComponent background_info
      image [set every repeat] = $back_info_img
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine practice_retrieval_second_image
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    ImageComponent image_2_prc
      image [set every repeat] = $img_second
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr
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    ImageComponent background_info_3
      image [set every repeat] = $back_info_img
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr
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  Routine practice_retrieval_fix_cross_02
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    ImageComponent mask_img1
      image = stimuli/mask_images/mask_00.png
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    ImageComponent background_info_4
      image [set every repeat] = $back_info_img
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine practice_retrieval_response
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    CodeComponent set_sides_options
      Code Type = Auto->JS
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      Begin Experiment:
        yes_position = (0,0)
        no_position=(0,0)

        # place holders
      Begin Routine:
        if opt_left == "yes":
            yes_position = (-0.05, 0)
            no_position = (0.05, 0)
        if opt_left == "no":
            yes_position = (0.05, 0)
            no_position = (-0.05, 0)
    CodeComponent end_routine_after_resp
      Code Type = Auto->JS
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      Begin Routine:
        # initialize
        responded_retr = False

        feedbackClock = None

        routClock = core.Clock()
      Each Frame:
        if resp_prc.keys and not responded_retr:
            responded_retr = True

            key = resp_prc.keys[-1] if isinstance(resp_prc.keys, list) else resp_prc.keys
            chosen = yes_txt_prc if (yes_position[0] < 0) == (key == left_key) else no_txt_prc
            chosen.color = "green" if key == correct_key else "red"




        # Each Frame (am Ende):
        if responded_retr and feedbackClock is None:
            feedbackClock = routClock.getTime()
        if feedbackClock is not None and routClock.getTime() >= feedbackClock + 0.3:
            continueRoutine = False

        if not responded_retr and routClock.getTime() >= retr_dur:
            continueRoutine = False
    TextComponent yes_txt_prc
      color [set every repeat] = white
      letterHeight = 0.035
      pos [set every repeat] = yes_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur
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    TextComponent no_txt_prc
      color [set every repeat] = white
      letterHeight = 0.035
      pos [set every repeat] = no_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur
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    CodeComponent set_option_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            yes_txt_prc.text = ("yes")
            no_txt_prc.text = ("no")
        if language == "german":
            yes_txt_prc.text = ("ja")
            no_txt_prc.text = ("nein")
        if language == "french":
            yes_txt_prc.text = ("oui")
            no_txt_prc.text = ("non")
    KeyboardComponent resp_prc
      allowedKeys = left_key, right_key
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = retr_dur
      store = first key
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    ImageComponent background_info_6
      image [set every repeat] = $back_info_img
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur + 5
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  Routine instruction_end_practice
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    CodeComponent bids_instruc_7
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part7,
                                type_of_stimulus="instructions",
                                component_label="instruction_part8")
      End Routine:
        bids.mark_offset(instruction_part7)
    TextComponent instruction_part7
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part7_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part7.text = (
            "You finished all the practice trials. Good job! You are now "
            "ready to start with the main task.\n"
            "Press the return key to end this part of the experiment. "
            )



        if language == "german":
            instruction_part7.text = (
        "Sie haben alle Übungsdurchgänge abgeschlossen. Gut gemacht! "
        "Sie sind nun bereit, mit der Hauptaufgabe zu beginnen.\n"
        "Drücken Sie die Eingabetaste, um diesen Teil des Experiments zu beenden. ")

        if language == "french":
                instruction_part7.text = (
        " Vous avez terminé tous les essais pratiques. Bravo! "
        "Vous êtes maintenant prêt à commencer la tâche principale.\n"
        "Appuyez sur la touche Entrée pour terminer cette partie de l'expérience. "
        )
    KeyboardComponent continue_button_8
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine too_slow_Routine_learn
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    CodeComponent determine_start
      Code Type = Auto->JS
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      Begin Routine:
        if responded:
            continueRoutine = False
    TextComponent tooSlowtext
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = too_slow_dur
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    CodeComponent set_slow_msg_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            tooSlowtext.text = (
                "Too slow. You need to respond faster."
            )

        if language == "german":
            tooSlowtext.text = (
                "Zu langsam. Sie müssen schneller antworten."
            )

        if language == "french":
            tooSlowtext.text = (
                "Trop lent. Vous devez répondre plus rapidement. "
            )
  Routine too_slow_Routine_retr
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    CodeComponent determine_start_2
      Code Type = Auto->JS
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      Begin Routine:
        if responded_retr:
            continueRoutine = False
    TextComponent tooSlowtext_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = too_slow_dur
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    CodeComponent set_slow_msg_text_2
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            tooSlowtext_2.text = (
                "Too slow. You need to respond faster."
            )

        if language == "german":
            tooSlowtext_2.text = (
                "Zu langsam. Sie müssen schneller antworten."
            )

        if language == "french":
            tooSlowtext_2.text = (
                "Trop lent. Vous devez répondre plus rapidement. "
            )
  Routine practice_retrieval_question
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    TextComponent question_retrieval_prc
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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    CodeComponent text_question_retrieval_prc
      Code Type = Auto->JS
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      Begin Routine:
        if language=="english":

            if trial_type == 1:
                question_retrieval_prc.text = (
                "Please indicate whether the following two images appeared in this order in the learned sequence. "
                "If yes, press the left arrow key. If no, press the right arrow key.\n"
                "[Press the return key to continue.]"
             )
            if trial_type == 2:
                question_retrieval_prc.text = (
                "You will see one image and then a pair of images. Please indicate which image from the pair is "
                "closer to the image presented first. Respond with the left and right arrow key.\n"
                "[Press the return key to continue.]"
               )
            if trial_type==3:
               question_retrieval_prc.text = (
               "You will see two images. Please indicate how many images lie between them in the learned sequence. "
               "Use the left and right arrow keys to move the slider, and press Return to confirm your response.\n"
                "[Press the return key to continue.]"
           )

        if language == "french":

            if trial_type == 1:
                question_retrieval_prc.text = (
                "Veuillez indiquer si les deux images suivantes sont apparues dans cet ordre "
                "dans la séquence apprise. "
                "Si oui, appuyez sur la flèche gauche. Si non, appuyez sur la flèche droite.\n"
                "[Appuyez sur la touche Entrée pour continuer.]"
                )

            if trial_type == 2:
                question_retrieval_prc.text = (
                "Vous verrez d’abord une image, puis une paire d’images. "
                "Veuillez indiquer laquelle des deux images est la plus proche "
                "de l’image présentée en premier. "
                "Répondez à l’aide des flèches gauche et droite.\n"
                "[Appuyez sur la touche Entrée pour continuer.]"
                )

            if trial_type == 3:
                question_retrieval_prc.text = (
                "Vous verrez deux images. "
                "Veuillez indiquer combien d’images se trouvent entre elles "
                "dans la séquence apprise. "
                "Déplacez le curseur à l’aide des flèches gauche et droite. "
                "Validez votre réponse avec la touche Entrée.\n"
                "[Appuyez sur la touche Entrée pour continuer.]"
                )

        if language=="german":

            if trial_type == 1:
                question_retrieval_prc.text = (
                "Bitte geben Sie an, ob die folgenden beiden Bilder in dieser Reihenfolge in der gelernten Reihenfolge vorkamen."
                "Wenn ja, drücken Sie die linke Pfeiltaste. Wenn nein, drücken Sie die rechte Pfeiltaste.\n"
                "[Drücke Sie die Eingabetaste, um weiterzumachen.] "
                )
            if trial_type == 2:
                question_retrieval_prc.text = (
                "Sie sehen ein Bilder und zwei weitere. Bitte geben Sie an, welches der beiden Bilder näher an dem "
                "zuerst präsentierten Bild liegt. "
                "Antworten Sie mit der linken und rechten Pfeiltaste.\n"
                "[Drücke Sie die Eingabetaste, um weiterzumachen.] "
                )
            if trial_type==3:
               question_retrieval_prc.text = (
               "Sie werden zwei Bilder sehen. Bitte geben Sie an, wie viele Bilder in der gelernten Reihenfolge zwischen diesen beiden liegen. "
                "Bewegen Sie den Slider mit den Pfeiltasten. "
                "Loggen Sie ihre Antwort mit der Eingabetaste ein.\n"
                "[Drücke Sie die Eingabetaste, um weiterzumachen.] "
                )
    KeyboardComponent continue_button_7
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.5
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  Routine retr_ITI_prc
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    TextComponent fix_cross_retrbegin
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine questions_refl_period_prc
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    TextComponent text_refl_period_questions
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent set_text_refl_period_questions
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            text_refl_period_questions.text = (
            "Think about the two images you are about to see:\n\n"
            "1. Do they appear in the same order as in the learned sequence?\n"
            "2. How many positions apart are they in the learned sequence?"
        )

        if language == "french":
            text_refl_period_questions.text = (
            "Pensez aux deux images que vous allez voir\u00a0:\n\n"
            "1. Apparaissent-elles dans le même ordre que dans la séquence apprise\u00a0?\n"
            "2. Combien de positions les séparent dans la séquence apprise\u00a0?"
        )
    KeyboardComponent continue_button_9
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine reflection_period_prc
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    TextComponent fix_cross_reflretr
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = reflection_win_dur
      text = +
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    ImageComponent background_info_5
      image [set every repeat] = $back_info_img
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = reflection_win_dur
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  Routine too_slow_Routine_2
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    CodeComponent determine_start_3
      Code Type = Auto->JS
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      Begin Routine:
        if responded_retr_slider:
            continueRoutine = False
    TextComponent tooSlowtext_3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = too_slow_dur
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    CodeComponent set_slow_msg_text_3
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            tooSlowtext_3.text = (
                "Too slow. You need to respond faster."
            )

        if language == "german":
            tooSlowtext_3.text = (
                "Zu langsam. Sie müssen schneller antworten."
            )

        if language == "french":
            tooSlowtext_3.text = (
                "Trop lent. Vous devez répondre plus rapidement. "
            )
  Routine practice_retrieval_distance
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    CodeComponent controlslider_pos_js
      Code Type = Py
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      Begin Routine:
        responded_retr_slider = False
        delayClock = None
        delayDone = False
        chosenDis = None
        is_correct = False
        chosen_num = None
        dist_press_onset = None
      Each Frame:
        #if slider_main.markerPos is None:
            #possible_positions = [0, 1, 2, 3, 4]
            #slider_main.markerPos = random.choice(possible_positions)

        #slider_main.markerPos = max(0, min(4, slider_main.markerPos))

        # only poll once the component has started AND its flip callbacks have run
        if resp_4.status == STARTED and resp_4.tStartRefresh is not None:
            keysPressed = resp_4.getKeys(keyList=[left_key, right_key, center_key, down_key], waitRelease=False)
        else:
            keysPressed = []

        if len(keysPressed) > 0 and not responded_retr_slider:
            chosen_key = keysPressed[0]
            if chosen_key.name == left_key:
                chosenDis = 5
                is_dist_corr = (chosenDis == distance_correct)
                if is_dist_corr:
                    opt_5.color = "green"
                else:
                    opt_5.color = "red"

            elif chosen_key.name == right_key:
                chosenDis = 3
                is_dist_corr = (chosenDis == distance_correct)
                if is_dist_corr:
                    opt_3.color = "green"
                else:
                    opt_3.color = "red"
            elif chosen_key.name == center_key:
                chosenDis = 2
                is_dist_corr = (chosenDis == distance_correct)
                if is_dist_corr:
                    opt_2.color = "green"
                else:
                    opt_2.color = "red"
            elif chosen_key.name == down_key:
                chosenDis = 4
                is_dist_corr = (chosenDis == distance_correct)
                if is_dist_corr:
                    opt_4.color = "green"
                else:
                    opt_4.color = "red"

            resp_4.keys = chosenDis
            resp_4.rt = chosen_key.rt
            resp_4.duration = chosen_key.duration
            resp_4.corr = 1 if chosenDis == distance_correct else 0

            t_kb_start = resp_4.tStartRefresh
            if t_kb_start is None:
                t_kb_start = resp_4.clock.getLastResetTime()
                print(f"[bids] WARNING: resp_4.tStartRefresh was None (retr_distance), "
                      f"using clock reset {t_kb_start:.6f}, frameN={frameN}")
            dist_press_onset = t_kb_start + chosen_key.rt

            responded_retr_slider = True
            delayClock = core.Clock()

        if responded_retr_slider and not delayDone and delayClock is not None and delayClock.getTime() >= 0.1:
            delayDone = True
            continueRoutine = False

        #if not responded_retr_slider and retrClock.getTime() >= (retr_dur_slider-1):
            #chooseNowText_3.setOpacity(1)

        if retrClock.getTime() >= retr_dur_slider and not responded_retr_slider:
            continueRoutine = False
    CodeComponent clear_clock_4
      Code Type = Py
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      Begin Routine:
        _resp_4_allKeys = None
        resp_4.clearEvents()
        retrClock = core.Clock()
        retrClock.reset()
    KeyboardComponent resp_4
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = retr_dur_slider
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    TextComponent opt_2
      color [set every repeat] = white
      letterHeight = 0.04
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur_slider
      text = 2
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    TextComponent opt_3
      color [set every repeat] = white
      letterHeight = 0.04
      pos = (0.05, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur_slider
      text = 3
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    TextComponent opt_4
      color [set every repeat] = white
      letterHeight = 0.04
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur_slider
      text = 4
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    TextComponent opt_5
      color [set every repeat] = white
      letterHeight = 0.04
      pos = (-0.05,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur_slider
      text = 5
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    ImageComponent background_info_7
      image [set every repeat] = $back_info_img
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur_slider + 5
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  Routine instruction_07
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    CodeComponent bids_instruc_8
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part8,
                                type_of_stimulus="instructions",
                                component_label="instruction_part7")
      End Routine:
        bids.mark_offset(instruction_part8)
    TextComponent instruction_part8
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part8_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part8.text = (
            "During practice, the complete sequence will be shown at the bottom of the screen, "
            "and you can use it to answer the questions.\n\n"
            "This is only an aid for the practice trials.\n"
            "In the main task the sequence will no longer be shown, "
            "and you will have to reconstruct it from memory to answer.\n\n"
            "[Press the return key to start the practice trials.]"
            )
        if language == "french":
            instruction_part8.text = (
            "Pendant l'entraînement, la séquence complète sera affichée en bas de l'écran "
            "et vous pourrez l'utiliser pour répondre aux questions.\n\n"
            "Il s'agit uniquement d'une aide pour les essais d'entraînement.\n"
            "Dans la tâche principale, la séquence ne sera plus affichée "
            "et vous devrez la reconstruire de mémoire pour répondre.\n\n"
            "[Appuyez sur la touche Entrée pour commencer les essais d'entraînement.]"
            )
        if language == "german":
            instruction_part8.text = (
            "Während der Übung wird die vollständige Sequenz unten auf dem Bildschirm angezeigt, "
            "und Sie können sie zur Beantwortung der Fragen verwenden.\n\n"
            "Dies ist nur eine Hilfe für die Übungsdurchgänge.\n"
            "In der Hauptaufgabe wird die Sequenz nicht mehr angezeigt, "
            "und Sie müssen sie zur Beantwortung aus dem Gedächtnis rekonstruieren.\n\n"
            "[Drücken Sie die Eingabetaste, um die Übungsdurchgänge zu starten.]"
            )
    KeyboardComponent continue_button_10
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instruction_08
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    CodeComponent bids_instruc_9
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part9,
                                type_of_stimulus="instructions",
                                component_label="instruction_part9")
      End Routine:
        bids.mark_offset(instruction_part9)
    TextComponent instruction_part9
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part9_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part9.text = (
            "On each trial you will see two images from the sequence, one after "
                    "the other.\n\n"
                    "A fixation cross then appears. Use this time to bring both images "
                    "back to mind and to think about where they sit in the sequence you "
                    "learned.\n\n"
                    "After that, you will answer two questions about them.\n\n"
            "[Press the return key to continue.]"
            )



        if language == "german":
            instruction_part9.text = (
         "In jedem Durchgang sehen Sie zwei Bilder aus der Sequenz, eines nach "
                    "dem anderen.\n\n"
                    "Anschließend erscheint ein Fixationskreuz. Nutzen Sie diese Zeit, um "
                    "sich beide Bilder wieder ins Gedächtnis zu rufen und darüber "
                    "nachzudenken, an welcher Stelle sie in der gelernten Sequenz "
                    "stehen.\n\n"
                    "Danach beantworten Sie zwei Fragen zu den beiden Bildern.\n\n"
                    "[Drücke Sie die Eingabetaste, um weiterzumachen.]"
        )

        if language == "french":
            instruction_part9.text = (
                "À chaque essai, vous verrez deux images de la séquence, l\u2019une "
                "après l\u2019autre.\n\n"
                "Une croix de fixation apparaîtra ensuite. Profitez de ce moment pour "
                "vous remémorer les deux images et pour penser à leur place dans la "
                "séquence que vous avez apprise.\n\n"
                "Vous répondrez ensuite à deux questions à leur sujet.\n\n"
                "[Appuyez sur la touche Entrée pour continuer.]"
            )
    KeyboardComponent continue_button_11
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instruction_09
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    CodeComponent bids_instruc_10
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part10,
                                type_of_stimulus="instructions",
                                component_label="instruction_part10")
      End Routine:
        bids.mark_offset(instruction_part10)
    TextComponent instruction_part10
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part10_text
      Code Type = Auto->JS
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      Begin Routine:
        NBSP = "\u00a0"

        if language == "english":
            instruction_part10.text = (
             "During the fixation cross, think about the two images you have just "
                    "seen:\n\n"
                    "1. Did they appear in the same order as in the learned sequence?\n"
                    "2. How many positions apart are they in the learned sequence?\n\n"
                    "The same two questions are asked on every trial, so you can always "
                    "start thinking about them straight away.\n\n"
            "[Press the return key to continue.]"
            )



        if language == "german":
            instruction_part10.text = (
         "Denken Sie während des Fixationskreuzes an die beiden Bilder, die "
                    "Sie gerade gesehen haben:\n\n"
                    "1. Sind sie in derselben Reihenfolge erschienen wie in der "
                    "gelernten Sequenz?\n"
                    "2. Wie viele Positionen liegen sie in der gelernten Sequenz "
                    "auseinander?\n\n"
                    "Diese beiden Fragen werden in jedem Durchgang gestellt. Sie können "
                    "also sofort damit beginnen, darüber nachzudenken.\n\n"
                    "[Drücke Sie die Eingabetaste, um weiterzumachen.]"
        )

        if language == "french":
                instruction_part10.text = (
        "Pendant la croix de fixation, pensez aux deux images que vous venez "
                    f"de voir{NBSP}:\n\n"
                    "1. Sont-elles apparues dans le même ordre que dans la séquence "
                    f"apprise{NBSP}?\n"
                    "2. Combien de positions les séparent dans la séquence "
                    f"apprise{NBSP}?\n\n"
                    "Ces deux questions sont posées à chaque essai, vous pouvez donc "
                    "toujours commencer à y réfléchir immédiatement.\n\n"
                    "[Appuyez sur la touche Entrée pour continuer.]"
        )
    KeyboardComponent continue_button_12
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instruction_10
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    CodeComponent bids_instruc_11
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part11,
                                type_of_stimulus="instructions",
                                component_label="instruction_part11")
      End Routine:
        bids.mark_offset(instruction_part11)
    TextComponent instruction_part11
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part11_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part11.text = (
                "First question: the ORDER.\n\n"
                "Did the two images appear in the same order as in the learned "
                "sequence?\n\n"
                "Answer with the LEFT and RIGHT arrow keys.\n\n"
                "The sides of \u201cyes\u201d and \u201cno\u201d change from trial to "
                "trial, so read the labels on the screen before you press.\n\n"
                "[Press the return key to continue.]"
            )

        if language == "german":
            instruction_part11.text = (
                "Erste Frage: die REIHENFOLGE.\n\n"
                "Sind die beiden Bilder in derselben Reihenfolge erschienen wie in "
                "der gelernten Sequenz?\n\n"
                "Antworten Sie mit der LINKEN und der RECHTEN Pfeiltaste.\n\n"
                "Die Seiten von \u201eja\u201c und \u201enein\u201c wechseln von "
                "Durchgang zu Durchgang. Lesen Sie deshalb die Beschriftungen auf "
                "dem Bildschirm, bevor Sie eine Taste drücken.\n\n"
                "[Drücken Sie die Eingabetaste, um weiterzumachen.]"
            )

        if language == "french":
            instruction_part11.text = (
                "Première question\u00a0: l\u2019ORDRE.\n\n"
                "Les deux images sont-elles apparues dans le même ordre que dans la "
                "séquence apprise\u00a0?\n\n"
                "Répondez avec les flèches GAUCHE et DROITE.\n\n"
                "Les côtés de \u00ab\u00a0oui\u00a0\u00bb et \u00ab\u00a0non\u00a0\u00bb "
                "changent d\u2019un essai à l\u2019autre\u00a0: lisez donc les "
                "étiquettes affichées à l\u2019écran avant d\u2019appuyer.\n\n"
                "[Appuyez sur la touche Entrée pour continuer.]"
            )
    KeyboardComponent continue_button_13
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instruction_11
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    CodeComponent bids_instruc_12
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part12,
                                type_of_stimulus="instructions",
                                component_label="instruction_part12")
      End Routine:
        bids.mark_offset(instruction_part12)
    TextComponent instruction_part12
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part12
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part12.text = (
                "Second question: the DISTANCE.\n\n"
                "How many positions apart are the two images in the learned "
                "sequence?\n\n"
                "The distance is the number of steps it takes to get from one image "
                "to the other along the sequence. It does not depend on the order in "
                "which the two images were shown to you \u2013 the distance is the "
                "same either way.\n"
                "Possible answers are 2, 3, 4 or 5 steps.\n\n"
                "[Press the return key to continue.]"
            )

        if language == "german":
            instruction_part12.text = (
                "Zweite Frage: der ABSTAND.\n\n"
                "Wie viele Positionen liegen die beiden Bilder in der gelernten "
                "Sequenz auseinander?\n\n"
                "Der Abstand ist die Anzahl der Schritte, die man benötigt, um in "
                "der Sequenz von einem Bild zum anderen zu gelangen. Er hängt nicht "
                "davon ab, in welcher Reihenfolge die beiden Bilder gezeigt wurden "
                "\u2013 der Abstand ist in beide Richtungen gleich.\n"
                "Mögliche Antworten sind 2, 3, 4 oder 5 Schritte.\n\n"
                "[Drücken Sie die Eingabetaste, um weiterzumachen.]"
            )

        if language == "french":
            instruction_part12.text = (
                "Deuxième question\u00a0: la DISTANCE.\n\n"
                "Combien de positions séparent les deux images dans la séquence "
                "apprise\u00a0?\n\n"
                "La distance correspond au nombre de pas nécessaires pour aller "
                "d\u2019une image à l\u2019autre le long de la séquence. Elle ne "
                "dépend pas de l\u2019ordre dans lequel les deux images vous ont été "
                "présentées\u00a0: la distance est la même dans les deux sens.\n"
                "Les réponses possibles sont 2, 3, 4 ou 5 pas.\n\n"
                "[Appuyez sur la touche Entrée pour continuer.]"
            )
    KeyboardComponent continue_button_14
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instruction_12
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    CodeComponent bids_instruc_13
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part13,
                                type_of_stimulus="instructions",
                                component_label="instruction_part13")
      End Routine:
        bids.mark_offset(instruction_part13)
    TextComponent instruction_part13
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part13_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part13.text = (
                "A few last points.\n\n"
            "Once a question is on the screen, answer as QUICKLY and as "
            "ACCURATELY as possible.\n"
            "If you are unsure, give your best guess, do not skip the "
            "question.\n\n"
            "[Press Enter to continue.]"
            )



        if language == "german":
            instruction_part13.text = (
        "Noch einige Hinweise.\n\n"
                    "Sobald eine Frage auf dem Bildschirm steht, antworten Sie so "
                    "SCHNELL und so GENAU wie möglich.\n"
                    "Wenn Sie unsicher sind, antworten Sie nach bestem Wissen."
                    "überspringen Sie die Frage nicht.\n\n"
                    "[Drücke Sie die Eingabetaste, um weiterzumachen.]"
        )

        if language == "french":
                instruction_part13.text = (
            "Encore quelques remarques.\n\n"
            "D\u00e8s qu\u2019une question appara\u00eet \u00e0 l\u2019\u00e9cran, "
            "r\u00e9pondez le plus VITE et le plus PR\u00c9CIS\u00c9MENT possible.\n"
            "En cas d\u2019h\u00e9sitation, donnez votre meilleure estimation. "
            "Ne sautez pas la question.\n\n"
            "[Appuyez sur la touche Entr\u00e9e pour continuer.]"
        )
    KeyboardComponent continue_button_15
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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Flow
  Routine startup_settings
  Routine instructions_01
  Routine instructions_02
  Routine instructions_03
  Routine instructions_04
  Routine instructions_05
  LoopInitiator practice_loop_learning loopType="TrialHandler"
    conditionsFile = sequences/main_trials_prc.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'promptFile': 'stimuli/practice_images/anchor.jpg', 'correctFile': 'stimuli/practice_images/cow.jpg', 'dist_01File': 'stimuli/practice_images/bread.jpg', 'dist_02File': 'stimuli/practice_images/plane.jpg', 'correct_pos': 'right', 'dist01_pos': 'left', 'dist02_pos': 'center', 'correct_ans': 'g'},
      {'promptFile': 'stimuli/practice_images/cow.jpg', 'correctFile': 'stimuli/practice_images/ant.jpg', 'dist_01File': 'stimuli/practice_images/banana.jpg', 'dist_02File': 'stimuli/practice_images/glasses.jpg', 'correct_pos': 'left', 'dist01_pos': 'right', 'dist02_pos': 'center', 'correct_ans': 'y'},
      {'promptFile': 'stimuli/practice_images/ant.jpg', 'correctFile': 'stimuli/practice_images/basket.jpg', 'dist_01File': 'stimuli/practice_images/axe.jpg', 'dist_02File': 'stimuli/practice_images/duck.jpg', 'correct_pos': 'center', 'dist01_pos': 'left', 'dist02_pos': 'right', 'correct_ans': 'r'},
      {'promptFile': 'stimuli/practice_images/basket.jpg', 'correctFile': 'stimuli/practice_images/bed.jpg', 'dist_01File': 'stimuli/practice_images/belt.jpg', 'dist_02File': 'stimuli/practice_images/bread.jpg', 'correct_pos': 'center', 'dist01_pos': 'right', 'dist02_pos': 'left', 'correct_ans': 'r'},
      {'promptFile': 'stimuli/practice_images/bed.jpg', 'correctFile': 'stimuli/practice_images/belt.jpg', 'dist_01File': 'stimuli/practice_images/anchor.jpg', 'dist_02File': 'stimuli/practice_images/desk.jpg', 'correct_pos': 'left', 'dist01_pos': 'center', 'dist02_pos': 'right', 'correct_ans': 'y'}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
    Routine practice_learn_choice
    Routine practice_learn_feedback
    Routine too_slow_Routine_learn
  LoopTerminator practice_loop_learning
  Routine instruction_06
  Routine instruction_08
  Routine instruction_09
  Routine instruction_10
  Routine instruction_11
  Routine instruction_12
  Routine instruction_07
  LoopInitiator practice_loop_retrieval loopType="TrialHandler"
    conditionsFile = sequences/retr_trials_prc.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trial_type': 2, 'img_first': 'stimuli/practice_images/ant.jpg', 'img_second': 'stimuli/practice_images/bed.jpg', 'img_third': 'stimuli/practice_images/belt.jpg', 'opt_left': 'stimuli/practice_images/bed.jpg', 'opt_right': 'stimuli/practice_images/belt.jpg', 'correct_side': 'left', 'correct_key': 'left', 'distance_correct': 1, 'image_dur_retr': 1.5, 'fix_dur_retr': 0.2},
      {'trial_type': 3, 'img_first': 'stimuli/practice_images/cow.jpg', 'img_second': 'stimuli/practice_images/basket.jpg', 'img_third': None, 'opt_left': None, 'opt_right': None, 'correct_side': None, 'correct_key': 'left', 'distance_correct': 1, 'image_dur_retr': 2, 'fix_dur_retr': 0.5},
      {'trial_type': 1, 'img_first': 'stimuli/practice_images/bed.jpg', 'img_second': 'stimuli/practice_images/cow.jpg', 'img_third': None, 'opt_left': 'yes', 'opt_right': 'no', 'correct_side': 'right', 'correct_key': 'right', 'distance_correct': 2, 'image_dur_retr': 1.2, 'fix_dur_retr': 0.2},
      {'trial_type': 3, 'img_first': 'stimuli/practice_images/cow.jpg', 'img_second': 'stimuli/practice_images/belt.jpg', 'img_third': None, 'opt_left': None, 'opt_right': None, 'correct_side': None, 'correct_key': 'right', 'distance_correct': 3, 'image_dur_retr': 2, 'fix_dur_retr': 0.5}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
    Routine retr_ITI_prc
    Routine questions_refl_period_prc
    Routine practice_retrieval_first_image
    Routine practice_retrieval_fix_cross_01
    Routine practice_retrieval_second_image
    Routine practice_retrieval_fix_cross_02
    Routine reflection_period_prc
    Routine practice_retrieval_response
    Routine too_slow_Routine_retr
    Routine practice_retrieval_distance
    Routine too_slow_Routine_2
  LoopTerminator practice_loop_retrieval
  Routine instruction_end_practice
